#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace HEATER_CONFIG {
  global variable _MODULE_HEATER_CONFIG_TempDelta;
  global variable _MODULE_HEATER_CONFIG_AmbientTemp;
  global variable _MODULE_HEATER_CONFIG_LidSequences[];
  global variable _MODULE_HEATER_CONFIG_HeaterTypes[];
  global variable _MODULE_HEATER_CONFIG_HeaterIDs[];
  global variable _MODULE_HEATER_CONFIG_PlateSequences[];
  global variable _MODULE_HEATER_CONFIG_SupportedPlateTypes[];
  global variable _MODULE_HEATER_CONFIG_ComPorts[];
  private function EDIT_Configuration(  ) void ;
  function GetAmbientTemp(  ) variable ;
  function GetComPorts( variable & o_ComPorts[] ) void ;
  function GetHeaterIDs( variable & o_HeaterIDs[] ) void ;
  function GetHeaterTypes( variable & o_HeaterTypes[] ) void ;
  function GetLidSequenceStrings( variable & o_LidSequenceStrings[] ) void ;
  function GetNumHeaters(  ) variable ;
  function GetPlateSequenceStrings( variable & o_PlateSequenceStrings[] ) void ;
  function GetSupportedPlateTypes( variable & o_SupportedPlateTypes[] ) void ;
  function GetTempDelta(  ) variable ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  private function EDIT_Configuration(  ) void {
    _MODULE_HEATER_CONFIG_AmbientTemp = 0;
    _MODULE_HEATER_CONFIG_TempDelta = 2;
    _MODULE_HEATER_CONFIG_ComPorts.SetSize(0);
    _MODULE_HEATER_CONFIG_ComPorts.AddAsLast(1);
    _MODULE_HEATER_CONFIG_ComPorts.AddAsLast(2);
    _MODULE_HEATER_CONFIG_HeaterIDs.SetSize(0);
    _MODULE_HEATER_CONFIG_HeaterIDs.AddAsLast(Translate("Heater 1"));
    _MODULE_HEATER_CONFIG_HeaterIDs.AddAsLast(Translate("Heater 2"));
    _MODULE_HEATER_CONFIG_HeaterTypes.SetSize(0);
    _MODULE_HEATER_CONFIG_HeaterTypes.AddAsLast(Translate("HeaterShaker"));
    _MODULE_HEATER_CONFIG_HeaterTypes.AddAsLast(Translate("HeaterShaker"));
    _MODULE_HEATER_CONFIG_SupportedPlateTypes = HSLExtensions::Array2D::Create(2, 4);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_HEATER_CONFIG_SupportedPlateTypes, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_SupportedPlateTypes, 1, 1, Translate("200uL Biorad 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_SupportedPlateTypes, 1, 2, Translate("400uL Thermo 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_SupportedPlateTypes, 1, 3, Translate("1200uL DeepWell 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_SupportedPlateTypes, 1, 4, Translate("400uL Corning Costar 96 Well UV Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_SupportedPlateTypes, 2, 1, Translate("200uL Biorad 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_SupportedPlateTypes, 2, 2, Translate("400uL Thermo 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_SupportedPlateTypes, 2, 3, Translate("1200uL DeepWell 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_SupportedPlateTypes, 2, 4, Translate("400uL Corning Costar 96 Well UV Plate"));
    _MODULE_HEATER_CONFIG_LidSequences = HSLExtensions::Array2D::Create(2, 4);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_HEATER_CONFIG_LidSequences, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_LidSequences, 1, 1, Translate("_HHS1_Lid_200uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_LidSequences, 1, 2, Translate("_HHS1_Lid_400uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_LidSequences, 1, 3, Translate("_HHS1_Lid_1200uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_LidSequences, 1, 4, Translate("HHS1_Lid_360uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_LidSequences, 2, 1, Translate("_HHS2_Lid_200uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_LidSequences, 2, 2, Translate("_HHS2_Lid_400uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_LidSequences, 2, 3, Translate("_HHS2_Lid_1200uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_LidSequences, 2, 4, Translate("HHS2_Lid_360uL"));
    _MODULE_HEATER_CONFIG_PlateSequences = HSLExtensions::Array2D::Create(2, 4);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_HEATER_CONFIG_PlateSequences, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_PlateSequences, 1, 1, Translate("_HHS1_96WellPCRPlate200uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_PlateSequences, 1, 2, Translate("_HHS1_96WellPCRPlate400uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_PlateSequences, 1, 3, Translate("_HHS1_96WellPCRPlate1200uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_PlateSequences, 1, 4, Translate("HHS1_96WellUVPlate400uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_PlateSequences, 2, 1, Translate("_HHS2_96WellPCRPlate200uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_PlateSequences, 2, 2, Translate("_HHS2_96WellPCRPlate400uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_PlateSequences, 2, 3, Translate("_HHS2_96WellPCRPlate1200uL"));
    HSLExtensions::Array2D::SetValue(_MODULE_HEATER_CONFIG_PlateSequences, 2, 4, Translate("HHS2_96WellUVPlate400uL"));
  }

  function GetComPorts( variable & o_ComPorts[] ) void {
    o_ComPorts.SetSize( 0);
    o_ComPorts=_MODULE_HEATER_CONFIG_ComPorts;
  }

  function GetHeaterTypes( variable & o_HeaterTypes[] ) void {
    o_HeaterTypes.SetSize( 0);
    o_HeaterTypes=_MODULE_HEATER_CONFIG_HeaterTypes;
  }

  function GetSupportedPlateTypes( variable & o_SupportedPlateTypes[] ) void {
    o_SupportedPlateTypes.SetSize( 0);
    o_SupportedPlateTypes=_MODULE_HEATER_CONFIG_SupportedPlateTypes;
  }

  function GetPlateSequenceStrings( variable & o_PlateSequenceStrings[] ) void {
    o_PlateSequenceStrings.SetSize( 0);
    o_PlateSequenceStrings=_MODULE_HEATER_CONFIG_PlateSequences;
  }

  function GetLidSequenceStrings( variable & o_LidSequenceStrings[] ) void {
    o_LidSequenceStrings.SetSize( 0);
    o_LidSequenceStrings=_MODULE_HEATER_CONFIG_LidSequences;
  }

  function GetHeaterIDs( variable & o_HeaterIDs[] ) void {
    o_HeaterIDs.SetSize( 0);
    o_HeaterIDs=_MODULE_HEATER_CONFIG_HeaterIDs;
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetAmbientTemp(  ) variable {
    return (_MODULE_HEATER_CONFIG_AmbientTemp);
  }

  function GetNumHeaters(  ) variable {
    private variable NumHeaters;
    NumHeaters=_MODULE_HEATER_CONFIG_HeaterIDs.GetSize();
    return (NumHeaters);
  }

  function GetTempDelta(  ) variable {
    return (_MODULE_HEATER_CONFIG_TempDelta);
  }
} // library namespace
