#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Heater\\Configuration\\Heater Config.hs_"
#include "HSLTrcLib.hsl"
#include "HslHamHeaterShakerLib.hsl"
#include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl"
#include "HSLStrLib.hsl"
#include "HSLExtensions\\Array2D.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\ReturnIDs.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Labware\\Labware.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HEATER {
  variable HeaterReservations[];
  variable HeaterHandles[];
  variable IsInit("False");
  private function AcquireReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function CheckReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function ConfirmReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function DeInit( device & ML_STAR, variable i_CommandString ) variable ;
  function DoCommand( device & ML_STAR, variable i_CommandString ) variable ;
  private function EndReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function GetReservationHeaterSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function GetReservationHeaterTransportType( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetReservationLidSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function GetReservationLidTransportType( device & ML_STAR, variable i_CommandString ) variable ;
  private function GetReservationPlateSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function GetReservationPlateTransportType( device & ML_STAR, variable i_CommandString ) variable ;
  function Init( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function ReleaseReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function StartReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    HEATER_CONFIG::_InitLibrary();
    TOOLS::_InitLibrary();
    COMMANDS::_InitLibrary();
    RETURN::_InitLibrary();
    SEQUENCES::_InitLibrary();
    RETURNIDS::_InitLibrary();
    LABWARE::_InitLibrary();
  }
  function _ExitLibrary() {
    HEATER_CONFIG::_ExitLibrary();
    TOOLS::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    RETURN::_ExitLibrary();
    SEQUENCES::_ExitLibrary();
    RETURNIDS::_ExitLibrary();
    LABWARE::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable NumHeaters;
    private variable HeaterTypes[];
    private variable HeaterIDs[];
    private variable ComPorts[];
    private variable Counter;
    private variable ComPort;
    private variable TempArray[];
    private variable ReturnString;
    private variable SSA[];
    private variable SS2A[];
    private variable ID;
    if (IsInit == "True")
    {
      ID = RETURNIDS::SuccessRequestSkipped();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Already Initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    MECC::TraceComment(Translate("HHS HHC module initialization beginning"));
    HEATER_CONFIG::Init();
    HEATER_CONFIG::GetComPorts(ComPorts);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    MECC::TraceComment(Translate("***** Checking Heater module sequences for validity *****"));
    MECC::TraceComment(Translate("***** Checking Heater module sequences for validity ***** Plates"));
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        HEATER_CONFIG::GetPlateSequenceStrings(SS2A);
        SSA = HSLExtensions::Array2D::GetColumn(SS2A, Counter);
        SEQUENCES::CheckSequences(ML_STAR, SSA);
      }
    }
    MECC::TraceComment(Translate("***** Checking Heater module sequences for validity ***** Lids"));
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        HEATER_CONFIG::GetLidSequenceStrings(SS2A);
        SSA = HSLExtensions::Array2D::GetColumn(SS2A, Counter);
        SEQUENCES::CheckSequences(ML_STAR, SSA);
      }
    }
    MECC::TraceComment(Translate("***** Checking Heater module sequences for validity ***** SUCCESS"));
    HEATER_CONFIG::GetHeaterIDs(HeaterIDs);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    TrcTrace4(Translate("There are "), NumHeaters, Translate(" Heaters to initialize."), Translate(""));
    HeaterReservations.SetSize(NumHeaters);
    HeaterHandles.SetSize(NumHeaters);
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        HeaterReservations.SetAt(Counter-1, Translate(""));
        if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
        {
          MECC::TraceComment(Translate("Attempting HeaterShaker initialization"));
          ComPort = StrIVal(ComPorts.ElementAt( Counter -1));
          HSLHamHeaterShaker::CreateUsbDevice(ComPort, HeaterHandles.ElementAt( Counter -1));
          HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 0);
          HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 1);
          HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 0);
          TrcTrace8(Translate("Heater #"), Counter, Translate(" with ID "), HeaterIDs.ElementAt( Counter -1), Translate(" and type "), HeaterTypes.ElementAt( Counter -1), Translate(" was successfully initialized as a HeaterShaker."), Translate(""));
        }
        else
        {
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            MECC::TraceComment(Translate("Attempting HeaterCooler initialization"));
            HamiltonHeaterCooler::Connect(ComPorts.ElementAt( Counter -1), 5, 0, TempArray);
            HeaterHandles.SetAt(Counter-1, TempArray.ElementAt( 1 -1));
            TrcTrace8(Translate("Heater #"), Counter, Translate(" with ID "), HeaterIDs.ElementAt( Counter -1), Translate(" and type "), HeaterTypes.ElementAt( Counter -1), Translate(" was successfully initialized as a HeaterCooler."), Translate(""));
          }
          else
          {
            MECC::TraceComment(Translate("HHS HHC HeaterType was not found. Acceptable values are HeaterShaker and HeaterCooler"));
            TrcTrace(Translate("Failed Heater Type: "), HeaterTypes.ElementAt( Counter -1));
            TrcTrace(Translate("Failed Heater Index: "), Counter);
            abort;
          }
        }
      }
    }
    MECC::TraceComment(Translate("HHS HHC module initialization succeeded"));
    IsInit = Translate("True");
    ID = RETURNIDS::SuccessNoErrors();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Init always succeeds"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function AcquireReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable HeaterTypes[];
    private variable HeaterIDs[];
    private variable Counter;
    private variable NumHeaters;
    private variable PlateTypes[];
    private variable AmbientTemp;
    private variable ReturnValue;
    private variable PlateTypesArray[];
    private variable CurrentTemp;
    private variable BestHeater;
    private variable TempDifference;
    private variable HistoricalTempDifference;
    private variable Dict[];
    private variable PlateName;
    private variable PlateType;
    private variable Temp;
    private variable RPM;
    private variable ReturnString;
    private variable ID;
    private variable LabwareTypeGetterTemp[];
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    LabwareTypeGetterTemp.SetSize(0);
    LabwareTypeGetterTemp.AddAsLast(PlateName);
    LABWARE::GetPlateLabwareType(LabwareTypeGetterTemp, LabwareTypeGetterTemp);
    PlateType=LabwareTypeGetterTemp.GetAt(1-1);
    if(0){
      COMMANDS::GetDictionaryItem(Dict, Translate("PlateType"), PlateType);
    }
    COMMANDS::GetDictionaryItem(Dict, Translate("Temperature"), Temp);
    COMMANDS::GetDictionaryItem(Dict, Translate("RPM"), RPM);
    HEATER_CONFIG::GetHeaterIDs(HeaterIDs);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    HEATER_CONFIG::GetSupportedPlateTypes(PlateTypes);
    AmbientTemp = HEATER_CONFIG::GetAmbientTemp();
    RPM = StrFVal(RPM);
    AmbientTemp = StrFVal(AmbientTemp);
    if (RPM == 0)
    {
      if (Temp == "")
      {
        TrcTrace(Translate("Incubation is at ambient without shaking so no heater is required"), Translate(""));
        ID = RETURNIDS::SuccessRequestSkipped();
        ReturnString = RETURN::CreateReturnString(ID, Translate("Incubation is at ambient without shaking so no heater is required"), Translate(""), Translate(""));
        return (ReturnString);
      }
    }
    else
    {
      if (Temp == "")
      {
        Temp = AmbientTemp;
      }
    }
    Temp = StrFVal(Temp);
    HistoricalTempDifference = 9999;
    BestHeater = 0;
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        CurrentTemp = 9999;
        if (HeaterReservations.ElementAt( Counter -1) == "")
        {
          PlateTypesArray = HSLExtensions::Array2D::GetColumn(PlateTypes, Counter);
          ReturnValue = TOOLS::IsInArray(PlateType, PlateTypesArray);
          if (ReturnValue == "True")
          {
            if (RPM == 0)
            {
              if (Temp >= AmbientTemp)
              {
                if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
                {
                  HSLHamHeaterShaker::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
                }
              }
              if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
              {
                HamiltonHeaterCooler::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
              }
            }
            else
            {
              if (Temp >= AmbientTemp)
              {
                if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
                {
                  HSLHamHeaterShaker::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
                }
              }
            }
            if (CurrentTemp != 9999)
            {
              if (CurrentTemp > Temp)
              {
                TempDifference = CurrentTemp - Temp;
              }
              else
              {
                TempDifference = Temp - CurrentTemp;
              }
              if (TempDifference < HistoricalTempDifference)
              {
                HistoricalTempDifference = TempDifference;
                BestHeater = Counter;
              }
            }
          }
        }
      }
    }
    if (BestHeater == 0)
    {
      MECC::TraceComment(Translate("There was not a heater available for this reservation... Please try again after an incubation ends."));
      ID = RETURNIDS::FailNotPossible();
      ReturnString = RETURN::CreateReturnString(ID, Translate("No heaters available or not heater match reservation criteria."), Translate(""), Translate(""));
      return (ReturnString);
    }
    else
    {
      HeaterReservations[ BestHeater -1] = PlateName;
      if (HeaterTypes.ElementAt( BestHeater -1) == "HeaterShaker")
      {
        HSLHamHeaterShaker::StartTempCtrl(HeaterHandles.ElementAt( BestHeater -1), Temp, 0);
      }
      if (HeaterTypes.ElementAt( BestHeater -1) == "HeaterCooler")
      {
        HamiltonHeaterCooler::SetTemperature(HeaterHandles.ElementAt( BestHeater -1), 0, 100, Temp, 0, 0);
      }
      TrcTrace8(Translate("Heater # "), BestHeater, Translate(" with ID "), HeaterIDs.ElementAt( BestHeater -1), Translate(" and type "), HeaterTypes.ElementAt( BestHeater -1), Translate(" was reserved for plate "), PlateName);
      ID = RETURNIDS::SuccessNoErrors();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation Successful"), Translate(""), Translate(""));
      return (ReturnString);
    }
  }

  private function ReleaseReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable NumHeaters;
    private variable Counter;
    private variable HeaterTypes[];
    private variable HeaterIDs[];
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable ID;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    HEATER_CONFIG::GetHeaterIDs(HeaterIDs);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          HeaterReservations.SetAt(Counter-1, Translate(""));
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
          }
          TrcTrace8(Translate("Reservation was released for "), PlateName, Translate(" on heater # "), Counter, Translate(" with ID "), HeaterIDs.ElementAt( Counter -1), Translate(" and type "), HeaterTypes.ElementAt( Counter -1));
          break;
        }
      }
    }
    ID = RETURNIDS::SuccessNoErrors();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation released"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetReservationPlateSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable NumPlateTypes;
    private variable Counter2;
    private variable PlateSequenceStringsArray[];
    private variable PlateTypes[];
    private variable PlateSequenceStrings[];
    private variable PlateTypesArray[];
    private variable ReturnVal;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable PlateType;
    private variable ID;
    private variable LabwareTypeGetterTemp[];
    private variable LabwareSequenceGetterTemp[];
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    LabwareTypeGetterTemp.SetSize(0);
    LabwareSequenceGetterTemp.AddAsLast(PlateName);
    LABWARE::GetPlateSequenceString(LabwareSequenceGetterTemp, LabwareSequenceGetterTemp);
    ReturnVal=LabwareSequenceGetterTemp.GetAt(1-1);
    ID = RETURNIDS::SuccessItemsReturned();
    ReturnString = RETURN::CreateReturnString(ID, Translate("PlateSequenceString Returned"), Translate("PlateSequenceString"), ReturnVal);
    return (ReturnString);
  }

  private function GetReservationLidSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable NumPlateTypes;
    private variable ReturnVal;
    private variable Counter2;
    private variable PlateTypes[];
    private variable PlateTypesArray[];
    private variable LidSequenceStrings[];
    private variable LidSequenceStringsArray[];
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable PlateType;
    private variable ID;
    private variable LabwareTypeGetterTemp[];
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    LabwareTypeGetterTemp.SetSize(0);
    LabwareTypeGetterTemp.AddAsLast(PlateName);
    LABWARE::GetPlateLabwareType(LabwareTypeGetterTemp, LabwareTypeGetterTemp);
    PlateType=LabwareTypeGetterTemp.GetAt(1-1);
    if(0){
      COMMANDS::GetDictionaryItem(Dict, Translate("PlateType"), PlateType);
    }
    HEATER_CONFIG::GetSupportedPlateTypes(PlateTypes);
    HEATER_CONFIG::GetLidSequenceStrings(LidSequenceStrings);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          PlateTypesArray = HSLExtensions::Array2D::GetColumn(PlateTypes, Counter);
          LidSequenceStringsArray = HSLExtensions::Array2D::GetColumn(LidSequenceStrings, Counter);
          NumPlateTypes=PlateTypesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumPlateTypes;)
            {
              Counter2 = Counter2 + 1;
              if (PlateType == PlateTypesArray.ElementAt( Counter2 -1))
              {
                ReturnVal = LidSequenceStringsArray.ElementAt( Counter2 -1);
                ID = RETURNIDS::SuccessItemsReturned();
                ReturnString = RETURN::CreateReturnString(ID, Translate("LidSequenceString Returned"), Translate("LidSequenceString"), ReturnVal);
                return (ReturnString);
              }
            }
          }
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Lid was not found for reservation and or PlateType"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function StartReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable HeaterTypes[];
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable Temp;
    private variable RPM;
    private variable ID;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    COMMANDS::GetDictionaryItem(Dict, Translate("Temperature"), Temp);
    COMMANDS::GetDictionaryItem(Dict, Translate("RPM"), RPM);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    RPM = StrFVal(RPM);
    Temp = StrFVal(Temp);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
            HSLHamHeaterShaker::StartTempCtrl(HeaterHandles.ElementAt( Counter -1), Temp, 0);
            if (RPM > 0)
            {
              HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 1);
              HSLHamHeaterShaker::StartShaker(HeaterHandles.ElementAt( Counter -1), RPM);
            }
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
            HamiltonHeaterCooler::SetTemperature(HeaterHandles.ElementAt( Counter -1), 0, 100, Temp, 0, 0);
          }
          ID = RETURNIDS::SuccessNoErrors();
          ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation Started"), Translate(""), Translate(""));
          return (ReturnString);
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation not found."), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function EndReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable HeaterTypes[];
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable ID;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopShaker(HeaterHandles.ElementAt( Counter -1));
            HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 0);
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
          }
        }
      }
    }
    ID = RETURNIDS::SuccessNoErrors();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Reservation Ended"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function ConfirmReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable TempDifference;
    private variable CurrentTemp;
    private variable HeaterTypes[];
    private variable TempDelta;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable Temp;
    private variable ID;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    COMMANDS::GetDictionaryItem(Dict, Translate("Temperature"), Temp);
    HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
    TempDelta = HEATER_CONFIG::GetTempDelta();
    TempDelta = StrFVal(TempDelta);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          Temp = StrFVal(Temp);
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
          }
          if (CurrentTemp > Temp)
          {
            TempDifference = CurrentTemp - Temp;
          }
          else
          {
            TempDifference = Temp - CurrentTemp;
          }
          if (TempDifference <= TempDelta)
          {
            ID = RETURNIDS::SuccessNoErrors();
            ReturnString = RETURN::CreateReturnString(ID, Translate("Temperature is within range. Incubation is ready"), Translate(""), Translate(""));
            return (ReturnString);
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
            HSLHamHeaterShaker::StartTempCtrl(HeaterHandles.ElementAt( Counter -1), Temp, 0);
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
            HamiltonHeaterCooler::SetTemperature(HeaterHandles.ElementAt( Counter -1), 0, 100, Temp, 0, 0);
          }
          ID = RETURNIDS::FailNotPossible();
          ReturnString = RETURN::CreateReturnString(ID, Translate("Temperature is out of range. Proceed accordingly"), Translate(""), Translate(""));
          return (ReturnString);
        }
      }
    }
    ID = RETURNIDS::SuccessRequestSkipped();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Incubation is ambient so no reservation was found."), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function CheckReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable ID;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          ID = RETURNIDS::SuccessNoErrors();
          ReturnString = RETURN::CreateReturnString(ID, Translate("Plate was found"), Translate(""), Translate(""));
          return (ReturnString);
        }
      }
    }
    ID = RETURNIDS::SuccessRequestSkipped();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Plate not found but it doesn't have it be found."), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DoCommand( device & ML_STAR, variable i_CommandString ) variable {
    private variable ReturnString;
    private variable Command;
    private variable ID;
    Command = COMMANDS::GetCommandStringCommand(i_CommandString);
    if (IsInit != "True")
    {
      ID = RETURNIDS::FailCritical();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Module not initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    if (Command == "AcquireReservation")
    {
      ReturnString = AcquireReservation(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "CheckReservation")
    {
      ReturnString = CheckReservation(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "ConfirmReservation")
    {
      ReturnString = ConfirmReservation(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "StartReservation")
    {
      ReturnString = StartReservation(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "EndReservation")
    {
      ReturnString = EndReservation(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "ReleaseReservation")
    {
      ReturnString = ReleaseReservation(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetReservationLidSequenceString")
    {
      ReturnString = GetReservationLidSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetReservationLidTransportType")
    {
      ReturnString = GetReservationLidTransportType(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetReservationPlateSequenceString")
    {
      ReturnString = GetReservationPlateSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetReservationPlateTransportType")
    {
      ReturnString = GetReservationPlateTransportType(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetReservationHeaterSequenceString")
    {
      ReturnString = GetReservationHeaterSequenceString(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    if (Command == "GetReservationHeaterTransportType")
    {
      ReturnString = GetReservationHeaterTransportType(ML_STAR, i_CommandString);
      return (ReturnString);
    }
    ID = RETURNIDS::FailCritical();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Command not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DeInit( device & ML_STAR, variable i_CommandString ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable HeaterTypes[];
    private variable ID;
    private variable ReturnString;
    if (IsInit == "True")
    {
      NumHeaters = HEATER_CONFIG::GetNumHeaters();
      HEATER_CONFIG::GetHeaterTypes(HeaterTypes);
      {
        for(Counter = 0; Counter < NumHeaters;)
        {
          Counter = Counter + 1;
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::Disconnect(HeaterHandles.ElementAt( Counter -1));
          }
        }
      }
      HSLHamHeaterShaker::Terminate();
      ID = RETURNIDS::SuccessNoErrors();
      ReturnString = RETURN::CreateReturnString(ID, Translate("Successfully Deinitialized all heaters."), Translate(""), Translate(""));
      return (ReturnString);
    }
    ID = RETURNIDS::SuccessRequestSkipped();
    ReturnString = RETURN::CreateReturnString(ID, Translate("No Deinit necessary."), Translate(""), Translate(""));
    return (ReturnString);
  }

  function GetReservationPlateTransportType( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumPlateTypes;
    private variable PlateName;
    private variable Counter;
    private variable ReturnVal;
    private variable Counter2;
    private variable ID;
    private variable i_CommandParameterStrings;
    private variable ReturnString;
    private variable NumHeaters;
    private variable PlateType;
    private variable LabwareTypeGetterTemp[];
    private variable Dict[];
    private variable PlateTypes[];
    private variable PlateTypesArray[];
    private variable LidSequenceStrings[];
    private variable LidSequenceStringsArray[];
    private variable AssociatedPlateTypes[];
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    LabwareTypeGetterTemp.SetSize(0);
    LabwareTypeGetterTemp.AddAsLast(PlateName);
    LABWARE::GetPlateLabwareType(LabwareTypeGetterTemp, LabwareTypeGetterTemp);
    ReturnVal=LabwareTypeGetterTemp.GetAt(1-1);
    ID = RETURNIDS::SuccessItemsReturned();
    ReturnString = RETURN::CreateReturnString(ID, Translate("PlateTransportType Returned"), Translate("PlateTransportType"), ReturnVal);
    return (ReturnString);
  }

  function GetReservationHeaterTransportType( device & ML_STAR, variable i_CommandString ) variable {
    private variable NumPlateTypes;
    private variable PlateName;
    private variable Counter;
    private variable ReturnVal;
    private variable Counter2;
    private variable ID;
    private variable i_CommandParameterStrings;
    private variable ReturnString;
    private variable NumHeaters;
    private variable PlateType;
    private variable LabwareTypeGetterTemp[];
    private variable Dict[];
    private variable PlateTypes[];
    private variable PlateTypesArray[];
    private variable LidSequenceStrings[];
    private variable LidSequenceStringsArray[];
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    LabwareTypeGetterTemp.SetSize(0);
    LabwareTypeGetterTemp.AddAsLast(PlateName);
    LABWARE::GetPlateLabwareType(LabwareTypeGetterTemp, LabwareTypeGetterTemp);
    PlateType=LabwareTypeGetterTemp.GetAt(1-1);
    if(0){
      COMMANDS::GetDictionaryItem(Dict, Translate("PlateType"), PlateType);
    }
    HEATER_CONFIG::GetSupportedPlateTypes(PlateTypes);
    HEATER_CONFIG::GetLidSequenceStrings(LidSequenceStrings);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          PlateTypesArray = HSLExtensions::Array2D::GetColumn(PlateTypes, Counter);
          LidSequenceStringsArray = HSLExtensions::Array2D::GetColumn(LidSequenceStrings, Counter);
          NumPlateTypes=PlateTypesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumPlateTypes;)
            {
              Counter2 = Counter2 + 1;
              if (PlateType == PlateTypesArray.ElementAt( Counter2 -1))
              {
                ReturnVal = LidSequenceStringsArray.ElementAt( Counter2 -1);
                ID = RETURNIDS::SuccessItemsReturned();
                ReturnString = RETURN::CreateReturnString(ID, Translate("LidSequenceString Returned"), Translate("LidSequenceString"), ReturnVal);
                return (ReturnString);
              }
            }
          }
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Lid was not found for reservation and or PlateType"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function GetReservationLidTransportType( device & ML_STAR, variable i_CommandString ) variable {
    private variable ReturnVal;
    private variable ID;
    private variable ReturnString;
    ID = RETURNIDS::SuccessItemsReturned();
    ReturnString = RETURN::CreateReturnString(ID, Translate("LidTransportType Returned"), Translate("LidTransportType"), Translate("Lid Heater"));
    return (ReturnString);
  }

  private function GetReservationHeaterSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable NumPlateTypes;
    private variable PlateName;
    private variable Counter;
    private variable ReturnVal;
    private variable Counter2;
    private variable ID;
    private variable ReturnString;
    private variable NumHeaters;
    private variable PlateType;
    private variable PlateSequenceStringsArray[];
    private variable LabwareTypeGetterTemp[];
    private variable Dict[];
    private variable PlateTypes[];
    private variable PlateSequenceStrings[];
    private variable PlateTypesArray[];
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    LabwareTypeGetterTemp.SetSize(0);
    LabwareTypeGetterTemp.AddAsLast(PlateName);
    LABWARE::GetPlateLabwareType(LabwareTypeGetterTemp, LabwareTypeGetterTemp);
    PlateType=LabwareTypeGetterTemp.GetAt(1-1);
    if(0){
      COMMANDS::GetDictionaryItem(Dict, Translate("PlateType"), PlateType);
    }
    HEATER_CONFIG::GetSupportedPlateTypes(PlateTypes);
    HEATER_CONFIG::GetPlateSequenceStrings(PlateSequenceStrings);
    NumHeaters = HEATER_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          PlateTypesArray = HSLExtensions::Array2D::GetColumn(PlateTypes, Counter);
          PlateSequenceStringsArray = HSLExtensions::Array2D::GetColumn(PlateSequenceStrings, Counter);
          NumPlateTypes=PlateTypesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumPlateTypes;)
            {
              Counter2 = Counter2 + 1;
              if (PlateType == PlateTypesArray.ElementAt( Counter2 -1))
              {
                ReturnVal = PlateSequenceStringsArray.ElementAt( Counter2 -1);
                ID = RETURNIDS::SuccessItemsReturned();
                ReturnString = RETURN::CreateReturnString(ID, Translate("HeaterSequenceString Returned"), Translate("HeaterSequenceString"), ReturnVal);
                return (ReturnString);
              }
            }
          }
        }
      }
    }
    ID = RETURNIDS::FailNotPossible();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Plate was not found for reservation and or PlateType"), Translate(""), Translate(""));
    return (ReturnString);
  }
} // library namespace
