#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLExtensions\\Array3D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace IMCS_SIZEX_DESALTING_CONFIG {
  global variable _MODULE_IMCS_SIZEX_DESALTING_TipSupportRackSequence;
  global variable _MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipTypes[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_IMCSRackSequences[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipRackSequences[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipSequenceStrings[];
  global variable _MODULE_IMCS_SIZEX_DESALTING_IMCSSampleSequences[];
  function EDIT_Configuration(  ) void ;
  function GetIMCSRackSequences( variable & o_IMCSRackSequenceStrings[] ) void ;
  function GetIMCSSampleSequences( variable & o_IMCSSampleSequenceStrings[] ) void ;
  function GetLiquidHandlingParameters( variable & o_LiquidHandlingParametersStrings[] ) void ;
  function GetPipetteRackSequences( variable & o_PipetteRackSequenceStrings[] ) void ;
  function GetPipetteTipDropoffSequence(  ) variable ;
  function GetPipetteTipSequences( variable & o_PipetteTipSequenceStrings[] ) void ;
  function GetPipetteTipTypes( variable & o_PipetteTipTypeStrings[] ) void ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function EDIT_Configuration(  ) void {
    _MODULE_IMCS_SIZEX_DESALTING_TipSupportRackSequence = Translate("Carrier32_Pos1_TipSupportRack_1mLChannel");
    _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipTypes.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipTypes.AddAsLast(Translate("Standard"));
    _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipTypes.AddAsLast(Translate("Slim"));
    _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipSequenceStrings.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipSequenceStrings.AddAsLast(Translate("seq_Tips_NTR_300ul"));
    _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipSequenceStrings.AddAsLast(Translate("MAM_Slim300_Tips"));
    _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipRackSequences.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipRackSequences.AddAsLast(Translate("Carrier32_Pos1_TipSupportRack_300Standard_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipRackSequences.AddAsLast(Translate("Carrier32_Pos1_TipSupportRack_300Slim_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_IMCSSampleSequences.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_IMCSSampleSequences.AddAsLast(Translate("Carrier32_Pos5_IMCSTipsSample_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_IMCSSampleSequences.AddAsLast(Translate("Carrier26_Pos5_IMCSTipsSample_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_IMCSRackSequences.SetSize(0);
    _MODULE_IMCS_SIZEX_DESALTING_IMCSRackSequences.AddAsLast(Translate("Carrier32_Pos5_IMCSTipsRack_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_IMCSRackSequences.AddAsLast(Translate("Carrier26_Pos5_IMCSTipsRack_96CoreHead"));
    _MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters = HSLExtensions::Array3D::Create(1, 2, 11);
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 1, 1, Translate("IMCS_SEC_T1_FastDispense"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 1, 2, Translate("IMCS_Desalting_NTR"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 1, 3, Translate("30"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 1, 4, Translate("30"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 1, 5, Translate("30"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 1, 6, Translate("950"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 1, 7, Translate("150"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 1, 8, Translate("150"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 1, 9, Translate("300"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 1, 10, Translate("100"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 1, 11, Translate("100"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 2, 1, Translate("IMCS_SEC_T1_FastDispense"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 2, 2, Translate("IMCS_Desalting_SLIM"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 2, 3, Translate("9"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 2, 4, Translate("12"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 2, 5, Translate("13"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 2, 6, Translate("950"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 2, 7, Translate("150"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 2, 8, Translate("150"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 2, 9, Translate("300"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 2, 10, Translate("100"));
    HSLExtensions::Array3D::SetValue(_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters, 1, 2, 11, Translate("100"));
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetPipetteTipDropoffSequence(  ) variable {
    return (_MODULE_IMCS_SIZEX_DESALTING_TipSupportRackSequence);
  }

  function GetLiquidHandlingParameters( variable & o_LiquidHandlingParametersStrings[] ) void {
    o_LiquidHandlingParametersStrings.SetSize( 0);
    o_LiquidHandlingParametersStrings=_MODULE_IMCS_SIZEX_DESALTING_IMCSLiquidHandlingParameters;
  }

  function GetIMCSRackSequences( variable & o_IMCSRackSequenceStrings[] ) void {
    o_IMCSRackSequenceStrings.SetSize( 0);
    o_IMCSRackSequenceStrings=_MODULE_IMCS_SIZEX_DESALTING_IMCSRackSequences;
  }

  function GetIMCSSampleSequences( variable & o_IMCSSampleSequenceStrings[] ) void {
    o_IMCSSampleSequenceStrings.SetSize( 0);
    o_IMCSSampleSequenceStrings=_MODULE_IMCS_SIZEX_DESALTING_IMCSSampleSequences;
  }

  function GetPipetteRackSequences( variable & o_PipetteRackSequenceStrings[] ) void {
    o_PipetteRackSequenceStrings.SetSize( 0);
    o_PipetteRackSequenceStrings=_MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipRackSequences;
  }

  function GetPipetteTipSequences( variable & o_PipetteTipSequenceStrings[] ) void {
    o_PipetteTipSequenceStrings.SetSize( 0);
    o_PipetteTipSequenceStrings=_MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipSequenceStrings;
  }

  function GetPipetteTipTypes( variable & o_PipetteTipTypeStrings[] ) void {
    o_PipetteTipTypeStrings.SetSize( 0);
    o_PipetteTipTypeStrings=_MODULE_IMCS_SIZEX_DESALTING_SupportedPipetteTipTypes;
  }
} // library namespace
