#pragma once
#include "389118_Pfizer\\IMCS\\JustBio\\SetCuttedTipType_Universal_V2.hs_"
#include "IMCS\\HSLSeqLib.hsl"
#include "IMCS\\HSLTipCountingLib.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\JustBio\\HSLTrcLib.hsl"
#include "ASWStandardDialogs\\AswStatusDialog.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\JustBio\\HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\HSLExtensions\\Venus.hsl"
#include "389118_Pfizer\\IMCS\\JustBio\\SMTs\\Asp_Disp_FW\\STAR_Channel_MPH_fwCmd.hs_"
#include "Visual_NTR_library\\Visual_NTR_library.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Module\\Pipette.hs_"
#include "HSLExtensions\\Array2D.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\IMCS SizeX Desalting\\Configuration\\IMCS SizeX Desalting Config.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\ReturnIDs.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace IMCS_SIZEX_DESALTING {
  variable _var_EndPos;
  variable _var_EquilibrationDispenseHeight;
  variable _var_StartPos;
  variable _var_ChaserDispense;
  variable _var_SEC_Dispense_FAST;
  variable _var_SampleVolume;
  variable _var_SizeXType;
  variable _var_NumSets;
  variable _var_SampleDispenseHeight;
  variable _var_ChaserVolume;
  variable _var_FullDispense;
  variable _var_SEC_Dispense_SLOW;
  variable _var_SampleDispense;
  variable _var_EquilibrationVolume;
  sequence _Seq_TipSupportReset_96Head;
  sequence _Seq_TipSupport_1mL;
  sequence _Seq_Slim300;
  sequence _Seq_BufferTrough;
  sequence _Seq_TipSupport_96Head;
  sequence _Seq_ElutionPlate;
  sequence _Seq_WasteTrough;
  sequence _Seq_IMCSTips1;
  sequence _Seq_IMCSTips2;
  sequence _Seq_IMCSRack1;
  sequence _Seq_IMCSRack2;
  variable _var_ChaserDispenseHeight;
  variable _var_SampleDispenseHeightIncrement_96Core;
  variable _var_WasteDispenseHeightIncrement_96Core;
  variable _var_WasteDispenseHeight_96Core;
  variable _var_SampleDispenseHeight_96Core;
  variable _var_Tip300Counter;
  sequence _seq_Tip300_NTR_Waste;
  sequence _seq_waste300NTR;
  sequence _seq_CoreGripTool;
  variable _var_TipType("SLIM");
  global variable _MODULE_IMCS_SIZEX_DESALTING_IsInit("False");
  private function Equilibrate( device & ML_STAR, variable CommandString ) variable ;
  function IMCSTips_Equl( device & ML_STAR, sequence & Tips_Seq ) void ;
  function IMCSTips_Process( device & ML_STAR, sequence & Tips_Seq, sequence & _SeqDesaltSolution ) void ;
  function IMCS_Init( sequence & BufferTroughSeq, sequence & WasteTroughSeq, sequence & ElutionPlateSeq, sequence & IMCSRack1Seq, sequence & IMCSRack2Seq, sequence & IMCSTips1Seq, sequence & IMCSTips2Seq, sequence & Tips300Seq, sequence & TipSupportSeq_1mL, sequence & TipSupportSeq_96Head, sequence & TipSupportResetSeq_96Head, variable NumSets, variable SizeXTip, variable StartPos, variable EndPos, variable TipType, variable Tip300Counter, sequence & waste300NTR, sequence & COREGripTool, sequence & Tip300_NTR_Waste ) void ;
  function IMCS_Print(  ) void ;
  private function Init( device & ML_STAR, variable CommandString ) variable ;
  private function SE_Dispense( device & ML_STAR, sequence & seq_tips, sequence & seq_aspdisp, variable iTime, variable Plunger_Dispense, variable EluteFlag, variable DispenseHeight ) void ;
  private function Sample_Dispense( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable SampleVol, variable DispenseHeight_SLIM, variable var_TipEject, variable var_TipPickUp, sequence & Tips_Seq ) void ;
  private function _ChangeSpecialPickUp( device & ML_STAR, sequence & io_seq_TipPickUp, variable i_bool_UseSpecialPickUp, variable i_strTipPropertyValue ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_InitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
    COMMANDS::_InitLibrary();
    TOOLS::_InitLibrary();
    PIPETTE::_InitLibrary();
    IMCS_SIZEX_DESALTING_CONFIG::_InitLibrary();
    RETURN::_InitLibrary();
    RETURNIDS::_InitLibrary();
  }
  function _ExitLibrary() {
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_ExitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    TOOLS::_ExitLibrary();
    PIPETTE::_ExitLibrary();
    IMCS_SIZEX_DESALTING_CONFIG::_ExitLibrary();
    RETURN::_ExitLibrary();
    RETURNIDS::_ExitLibrary();
  }

  private function Sample_Dispense( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable SampleVol, variable DispenseHeight_SLIM, variable var_TipEject, variable var_TipPickUp, sequence & Tips_Seq ) void {
    private dialog customDialog_1;
    private variable Actual_SampleVol;
    private variable loopCounter5;
    Actual_SampleVol = SampleVol - 5;
    if (var_TipPickUp == 1)
    {
      _Seq_TipSupport_1mL.SetCount(_var_EndPos);
      _Seq_TipSupport_1mL.SetCurrentPosition(_var_StartPos);
      {
        loopCounter5 = 0;
        while (
           (_Seq_TipSupport_1mL.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Tips_Seq, 1, _Seq_TipSupport_1mL, 1);
          loopCounter5 = loopCounter5 + 1;
          if (_var_TipType == "NTR")
          {
            VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, Tips_Seq, _var_Tip300Counter, _seq_waste300NTR, _seq_CoreGripTool, 1, 1, 0, _seq_Tip300_NTR_Waste, 0, 8, 0, 1, Translate("Please Reload 300 NTR Tips"), 999);
          }
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (_Seq_TipSupport_1mL.GetCurrentPosition() > 0 && _Seq_TipSupport_1mL.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Tips_Seq.SetMax(Tips_Seq.GetTotal());
        _Seq_TipSupport_1mL.SetMax(_Seq_TipSupport_1mL.GetTotal());
        _Seq_TipSupport_1mL.SetCurrentPosition(1);
      }
    }
    _Seq_TipSupport_96Head.SetCurrentPosition(1);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    SeqResetSequenceIndexes(seqSource);
    if (_var_TipType == "SLIM")
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    }
    else
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    }
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    if(0){
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
    }
    seqSource.SetCurrentPosition(1);
    seqDestination.SetCurrentPosition(1);
    if (_var_TipType == "SLIM")
    {
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    else
    {
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    if (var_TipEject == 1)
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    else
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
  }

  private function _ChangeSpecialPickUp( device & ML_STAR, sequence & io_seq_TipPickUp, variable i_bool_UseSpecialPickUp, variable i_strTipPropertyValue ) void {
    private variable str_LabID;
    private variable str_SpecialPickup;
    private variable str_NormalPickup;
    private variable str_PropertyName;
    str_PropertyName = Translate("MlStarIsCoreHeadSpecialTipPickup");
    if(0){
      str_SpecialPickup = Translate("2");
      str_SpecialPickup = Translate("1");
    }
    str_NormalPickup = Translate("0");
    str_LabID = SeqGetLabwareId(io_seq_TipPickUp);
    if (i_bool_UseSpecialPickUp == 1)
    {
      if(0){
        HSLLabwrAccess::ValueForKeySetForPropertiesOfLabwareID(ML_STAR, str_SpecialPickup, str_PropertyName, str_LabID);
      }
      HSLLabwrAccess::ValueForKeySetForPropertiesOfLabwareID(ML_STAR, i_strTipPropertyValue, str_PropertyName, str_LabID);
    }
    else
    {
      if(0){
        HSLLabwrAccess::ValueForKeySetForPropertiesOfLabwareID(ML_STAR, str_NormalPickup, str_PropertyName, str_LabID);
      }
      HSLLabwrAccess::ValueForKeySetForPropertiesOfLabwareID(ML_STAR, str_NormalPickup, str_PropertyName, str_LabID);
    }
  }

  function IMCSTips_Process( device & ML_STAR, sequence & Tips_Seq, sequence & _SeqDesaltSolution ) void {
    private variable _Temp;
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
    MECC::TraceComment(Translate("\n*****Sample Loading*****\n"));
    if (_var_NumSets > 1)
    {
      Sample_Dispense(ML_STAR, _SeqDesaltSolution, _Seq_IMCSTips1, _var_SampleVolume, _var_SampleDispenseHeight, 1, 1, Tips_Seq);
      SE_Dispense(ML_STAR, _Seq_IMCSRack1, _Seq_WasteTrough, 60, _var_SampleDispense, 0, _var_WasteDispenseHeight_96Core);
      _var_WasteDispenseHeight_96Core = _var_WasteDispenseHeight_96Core + _var_SampleDispenseHeightIncrement_96Core;
      Sample_Dispense(ML_STAR, _SeqDesaltSolution, _Seq_IMCSTips2, _var_SampleVolume, _var_SampleDispenseHeight, 0, 0, Tips_Seq);
      SE_Dispense(ML_STAR, _Seq_IMCSRack2, _Seq_WasteTrough, 60, _var_SampleDispense, 0, _var_WasteDispenseHeight_96Core);
      _var_WasteDispenseHeight_96Core = _var_WasteDispenseHeight_96Core + _var_SampleDispenseHeightIncrement_96Core;
    }
    else
    {
      Sample_Dispense(ML_STAR, _SeqDesaltSolution, _Seq_IMCSTips1, _var_SampleVolume, _var_SampleDispenseHeight, 0, 1, Tips_Seq);
      SE_Dispense(ML_STAR, _Seq_IMCSRack1, _Seq_WasteTrough, 60, _var_SampleDispense, 0, _var_WasteDispenseHeight_96Core);
      _var_WasteDispenseHeight_96Core = _var_WasteDispenseHeight_96Core + _var_SampleDispenseHeightIncrement_96Core;
    }
    MECC::TraceComment(Translate("\n*****Chaser*****\n"));
    if (_var_NumSets > 1)
    {
      Sample_Dispense(ML_STAR, _Seq_BufferTrough, _Seq_IMCSTips1, _var_ChaserVolume, _var_ChaserDispenseHeight, 1, 1, Tips_Seq);
      SE_Dispense(ML_STAR, _Seq_IMCSRack1, _Seq_ElutionPlate, 60, _var_ChaserDispense, 1, _var_SampleDispenseHeight_96Core);
      _var_SampleDispenseHeight_96Core = _var_SampleDispenseHeight_96Core + _var_SampleDispenseHeightIncrement_96Core;
      Sample_Dispense(ML_STAR, _Seq_BufferTrough, _Seq_IMCSTips2, _var_ChaserVolume, _var_ChaserDispenseHeight, 1, 0, Tips_Seq);
      SE_Dispense(ML_STAR, _Seq_IMCSRack2, _Seq_ElutionPlate, 60, _var_ChaserDispense, 1, _var_SampleDispenseHeight_96Core);
      _var_SampleDispenseHeight_96Core = _var_SampleDispenseHeight_96Core + _var_SampleDispenseHeightIncrement_96Core;
    }
    else
    {
      Sample_Dispense(ML_STAR, _Seq_BufferTrough, _Seq_IMCSTips1, _var_ChaserVolume, _var_ChaserDispenseHeight, 1, 1, Tips_Seq);
      SE_Dispense(ML_STAR, _Seq_IMCSRack1, _Seq_ElutionPlate, 60, _var_ChaserDispense, 1, _var_SampleDispenseHeight_96Core);
      _var_SampleDispenseHeight_96Core = _var_SampleDispenseHeight_96Core + _var_SampleDispenseHeightIncrement_96Core;
    }
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
    _Temp = _var_SampleVolume * 0.8;
    _Temp = _Temp * _var_NumSets;
    AswStatusDialog::AppendText(Translate("Mixing samples after elution"));
    _Seq_TipSupport_96Head.SetCurrentPosition(1);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    if(0){
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    TipCount::Write2(_Seq_Slim300, Translate("Tip300SlimCounter"), ML_STAR);
  }

  function IMCS_Print(  ) void {
    private variable _Temp;
    TrcTrace(Translate("********************************"), Translate(""));
    TrcTrace(Translate("********************************"), Translate(""));
    TrcTrace(Translate("Trace IMCS Library Settings"), Translate(""));
    TrcTrace(Translate("********************************"), Translate(""));
    TrcTrace(Translate("********************************"), Translate(""));
    TrcTrace(Translate("Dispense Fast: "), _var_SEC_Dispense_FAST);
    TrcTrace(Translate("Dispense Slow: "), _var_SEC_Dispense_SLOW);
    TrcTrace(Translate("EQ Dis Height: "), _var_EquilibrationDispenseHeight);
    TrcTrace(Translate("samp Dis Height: "), _var_SampleDispenseHeight);
    TrcTrace(Translate("Chaser Dis Height: "), _var_ChaserDispenseHeight);
    TrcTrace(Translate("Full Dis: "), _var_FullDispense);
    TrcTrace(Translate("Samp Dis: "), _var_SampleDispense);
    TrcTrace(Translate("Chase Dis: "), _var_ChaserDispense);
    TrcTrace(Translate("EQ Vol: "), _var_EquilibrationVolume);
    TrcTrace(Translate("Samp Vol: "), _var_SampleVolume);
    TrcTrace(Translate("Chase Vol: "), _var_ChaserVolume);
    TrcTrace(Translate("SizeXType: "), _var_SizeXType);
    TrcTrace(Translate("Num Setsl: "), _var_NumSets);
    TrcTrace(Translate("Start Pos: "), _var_StartPos);
    TrcTrace(Translate("End Pos: "), _var_EndPos);
    _Temp = SeqGetName(_Seq_BufferTrough);
    TrcTrace(Translate("Buffer Seq: "), _Temp);
    _Temp = SeqGetName(_Seq_ElutionPlate);
    TrcTrace(Translate("Elution Seq: "), _Temp);
    _Temp = SeqGetName(_Seq_IMCSRack1);
    TrcTrace(Translate("IMCS Rack1 Seq: "), _Temp);
    _Temp = SeqGetName(_Seq_IMCSRack2);
    TrcTrace(Translate("IMCS Rack2 Seq: "), _Temp);
    _Temp = SeqGetName(_Seq_IMCSTips1);
    TrcTrace(Translate("IMCS Tips1 Seq: "), _Temp);
    _Temp = SeqGetName(_Seq_IMCSTips2);
    TrcTrace(Translate("IMCS Tips2 Seq: "), _Temp);
    _Temp = SeqGetName(_Seq_Slim300);
    TrcTrace(Translate("Tips Seq: "), _Temp);
    _Temp = SeqGetName(_Seq_TipSupport_1mL);
    TrcTrace(Translate("Support 1 Seq: "), _Temp);
    _Temp = SeqGetName(_Seq_TipSupport_96Head);
    TrcTrace(Translate("Support 96 Seq: "), _Temp);
    _Temp = SeqGetName(_Seq_TipSupportReset_96Head);
    TrcTrace(Translate("Support 96 reset Seq: "), _Temp);
    _Temp = SeqGetName(_Seq_WasteTrough);
    TrcTrace(Translate("Waste Seq: "), _Temp);
    TrcTrace(Translate("********************************"), Translate(""));
    TrcTrace(Translate("********************************"), Translate(""));
    TrcTrace(Translate("End"), Translate(""));
    TrcTrace(Translate("********************************"), Translate(""));
    TrcTrace(Translate("********************************"), Translate(""));
  }

  function IMCS_Init( sequence & BufferTroughSeq, sequence & WasteTroughSeq, sequence & ElutionPlateSeq, sequence & IMCSRack1Seq, sequence & IMCSRack2Seq, sequence & IMCSTips1Seq, sequence & IMCSTips2Seq, sequence & Tips300Seq, sequence & TipSupportSeq_1mL, sequence & TipSupportSeq_96Head, sequence & TipSupportResetSeq_96Head, variable NumSets, variable SizeXTip, variable StartPos, variable EndPos, variable TipType, variable Tip300Counter, sequence & waste300NTR, sequence & COREGripTool, sequence & Tip300_NTR_Waste ) void {
    SeqCopySequence(_Seq_BufferTrough, BufferTroughSeq);
    SeqCopySequence(_Seq_WasteTrough, WasteTroughSeq);
    SeqCopySequence(_Seq_ElutionPlate, ElutionPlateSeq);
    SeqCopySequence(_Seq_ElutionPlate, ElutionPlateSeq);
    SeqCopySequence(_Seq_Slim300, Tips300Seq);
    SeqCopySequence(_Seq_IMCSRack1, IMCSRack1Seq);
    SeqCopySequence(_Seq_IMCSRack2, IMCSRack2Seq);
    SeqCopySequence(_Seq_IMCSTips1, IMCSTips1Seq);
    SeqCopySequence(_Seq_IMCSTips2, IMCSTips2Seq);
    SeqCopySequence(_Seq_TipSupport_1mL, TipSupportSeq_1mL);
    SeqCopySequence(_Seq_TipSupport_96Head, TipSupportSeq_96Head);
    SeqCopySequence(_Seq_TipSupportReset_96Head, TipSupportResetSeq_96Head);
    SeqCopySequence(_seq_waste300NTR, waste300NTR);
    SeqCopySequence(_seq_CoreGripTool, COREGripTool);
    SeqCopySequence(_seq_Tip300_NTR_Waste, Tip300_NTR_Waste);
    _var_NumSets = NumSets;
    _var_SizeXType = SizeXTip;
    _var_StartPos = StartPos;
    _var_EndPos = EndPos;
    _var_TipType = TipType;
    _var_Tip300Counter = Tip300Counter;
    if (_var_SizeXType == 0)
    {
      _var_SEC_Dispense_SLOW = Translate("IMCS_SEC_T1_SlowDispense");
      _var_SEC_Dispense_FAST = Translate("IMCS_SEC_T1_FastDispense");
      if (_var_TipType == "SLIM")
      {
        _var_EquilibrationDispenseHeight = 9;
        _var_SampleDispenseHeight = 12;
        _var_ChaserDispenseHeight = 13;
      }
      else
      {
        _var_EquilibrationDispenseHeight = 30;
        _var_SampleDispenseHeight = 30;
        _var_ChaserDispenseHeight = 30;
      }
      _var_FullDispense = 950;
      _var_SampleDispense = 150;
      _var_ChaserDispense = 150;
      _var_SampleVolume = 100;
      _var_ChaserVolume = 100;
      _var_EquilibrationVolume = 300;
      _var_WasteDispenseHeight_96Core = 7;
      _var_WasteDispenseHeightIncrement_96Core = 5;
      _var_SampleDispenseHeight_96Core = 3;
      _var_SampleDispenseHeightIncrement_96Core = 2;
    }
    else
    {
      _var_SEC_Dispense_SLOW = Translate("IMCS_SEC_T1_SlowDispense");
      _var_SEC_Dispense_FAST = Translate("IMCS_SEC_T1_FastDispense");
      _var_EquilibrationDispenseHeight = 16;
      _var_SampleDispenseHeight = 20;
      _var_ChaserDispenseHeight = 21;
      _var_FullDispense = 950;
      _var_SampleDispense = 200;
      _var_ChaserDispense = 300;
      _var_SampleVolume = 150;
      _var_ChaserVolume = 150;
      _var_EquilibrationVolume = 300;
      _var_WasteDispenseHeight_96Core = 5;
      _var_WasteDispenseHeightIncrement_96Core = 4;
      _var_SampleDispenseHeight_96Core = 5;
      _var_SampleDispenseHeightIncrement_96Core = 2;
    }
  }

  function IMCSTips_Equl( device & ML_STAR, sequence & Tips_Seq ) void {
    private variable _SampleNum;
    private variable EquilibrationDispenseHeight;
    private variable _Counter;
    private variable temp;
    private variable _IterCounter;
    private variable loopCounter1;
    private variable var_EquilTipEject;
    private variable TipsToMove;
    private variable _SeqPosSrc;
    private variable _LabID_MoveIMCSSet1;
    private variable _SeqPosDest;
    private variable _PosID_MoveIMCSSet1;
    private variable _LabID_MoveIMCSSet2;
    private variable _PosID_MoveIMCSSet2;
    private variable _NumIter;
    private variable var_EquilTipPickUp;
    private variable loopCounter6;
    private sequence _Seq_MoveIMCSSet2_Ref;
    private sequence _Seq_MoveIMCSSet1_Src;
    private sequence _Seq_MoveIMCSSet2_Src;
    private sequence _Seq_MoveIMCSSet2_Dest;
    private sequence _Seq_MoveIMCSSet1_Dest;
    private sequence _Seq_MoveIMCSSet1_Ref;
    private variable SampleWasteHeightDiff;
    _SampleNum = _var_EndPos - _var_StartPos;
    _SampleNum = _SampleNum + 1;
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
    MECC::TraceComment(Translate("\n*****Equilibration*****\n"));
    SeqCopySequence(_Seq_MoveIMCSSet1_Ref, _Seq_IMCSRack1);
    SeqCopySequence(_Seq_MoveIMCSSet2_Ref, _Seq_IMCSRack2);
    temp = _SampleNum % 8;
    _NumIter = _SampleNum / 8;
    if (temp != 0)
    {
      _NumIter = _NumIter + 1;
    }
    TrcTrace(Translate("NUM"), _NumIter);
    _SeqPosSrc = _SampleNum - 0;
    {
      for(_IterCounter = 0; _IterCounter < _NumIter;)
      {
        _IterCounter = _IterCounter + 1;
        TipsToMove = _SeqPosSrc;
        if (TipsToMove > 8)
        {
          TipsToMove = 8;
        }
        temp = _IterCounter * 8;
        _SeqPosSrc = _SampleNum - temp;
        _SeqPosDest = _var_EndPos - temp;
        if (_SeqPosSrc < 0)
        {
          temp = _SeqPosSrc * -1;
          _SeqPosSrc = _SeqPosSrc + temp;
          _SeqPosDest = _SeqPosDest + temp;
        }
        {
          for(_Counter = 0; _Counter < TipsToMove;)
          {
            _Counter = _Counter + 1;
            temp = _SeqPosSrc + _Counter;
            _Seq_MoveIMCSSet1_Ref.SetCurrentPosition(temp);
            _LabID_MoveIMCSSet1 = SeqGetLabwareId(_Seq_MoveIMCSSet1_Ref);
            _PosID_MoveIMCSSet1 = SeqGetPositionId(_Seq_MoveIMCSSet1_Ref);
            SeqAdd(_Seq_MoveIMCSSet1_Src, _LabID_MoveIMCSSet1, _PosID_MoveIMCSSet1);
            _Seq_MoveIMCSSet2_Ref.SetCurrentPosition(temp);
            _LabID_MoveIMCSSet2 = SeqGetLabwareId(_Seq_MoveIMCSSet2_Ref);
            _PosID_MoveIMCSSet2 = SeqGetPositionId(_Seq_MoveIMCSSet2_Ref);
            SeqAdd(_Seq_MoveIMCSSet2_Src, _LabID_MoveIMCSSet2, _PosID_MoveIMCSSet2);
            temp = _SeqPosDest + _Counter;
            _Seq_MoveIMCSSet1_Ref.SetCurrentPosition(temp);
            _LabID_MoveIMCSSet1 = SeqGetLabwareId(_Seq_MoveIMCSSet1_Ref);
            _PosID_MoveIMCSSet1 = SeqGetPositionId(_Seq_MoveIMCSSet1_Ref);
            SeqAdd(_Seq_MoveIMCSSet1_Dest, _LabID_MoveIMCSSet1, _PosID_MoveIMCSSet1);
            _Seq_MoveIMCSSet2_Ref.SetCurrentPosition(temp);
            _LabID_MoveIMCSSet2 = SeqGetLabwareId(_Seq_MoveIMCSSet2_Ref);
            _PosID_MoveIMCSSet2 = SeqGetPositionId(_Seq_MoveIMCSSet2_Ref);
            SeqAdd(_Seq_MoveIMCSSet2_Dest, _LabID_MoveIMCSSet2, _PosID_MoveIMCSSet2);
          }
        }
      }
    }
    AswStatusDialog::AppendText(Translate("I like to MOVE IT MOVE IT!"));
    _Seq_MoveIMCSSet1_Dest.SetCurrentPosition(1);
    _Seq_MoveIMCSSet1_Src.SetCurrentPosition(1);
    {
      loopCounter6 = 0;
      while (
         (_Seq_MoveIMCSSet1_Dest.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, _Seq_MoveIMCSSet1_Dest, 1, _Seq_MoveIMCSSet1_Src, 1);
        loopCounter6 = loopCounter6 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (_Seq_MoveIMCSSet1_Dest.GetCurrentPosition() > 0 && _Seq_MoveIMCSSet1_Dest.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      _Seq_MoveIMCSSet1_Dest.SetMax(_Seq_MoveIMCSSet1_Dest.GetTotal());
      _Seq_MoveIMCSSet1_Src.SetMax(_Seq_MoveIMCSSet1_Src.GetTotal());
      _Seq_MoveIMCSSet1_Dest.SetCurrentPosition(1);
      _Seq_MoveIMCSSet1_Src.SetCurrentPosition(1);
    }
    if (_var_NumSets > 1)
    {
      _Seq_MoveIMCSSet2_Dest.SetCurrentPosition(1);
      _Seq_MoveIMCSSet2_Src.SetCurrentPosition(1);
      {
        loopCounter6 = 0;
        while (
           (_Seq_MoveIMCSSet2_Dest.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, _Seq_MoveIMCSSet2_Dest, 1, _Seq_MoveIMCSSet2_Src, 1);
          loopCounter6 = loopCounter6 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (_Seq_MoveIMCSSet2_Dest.GetCurrentPosition() > 0 && _Seq_MoveIMCSSet2_Dest.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        _Seq_MoveIMCSSet2_Dest.SetMax(_Seq_MoveIMCSSet2_Dest.GetTotal());
        _Seq_MoveIMCSSet2_Src.SetMax(_Seq_MoveIMCSSet2_Src.GetTotal());
        _Seq_MoveIMCSSet2_Dest.SetCurrentPosition(1);
        _Seq_MoveIMCSSet2_Src.SetCurrentPosition(1);
      }
    }
    {
      for(loopCounter1 = 0; loopCounter1 < 3;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          var_EquilTipPickUp = 1;
        }
        else
        {
          var_EquilTipPickUp = 0;
        }
        if (loopCounter1 == 3)
        {
          var_EquilTipEject = 0;
        }
        else
        {
          var_EquilTipEject = 1;
        }
        if (_var_NumSets > 1)
        {
          Sample_Dispense(ML_STAR, _Seq_BufferTrough, _Seq_IMCSTips1, _var_EquilibrationVolume, _var_EquilibrationDispenseHeight, 1, var_EquilTipPickUp, Tips_Seq);
          SE_Dispense(ML_STAR, _Seq_IMCSRack1, _Seq_WasteTrough, 30, _var_FullDispense, 0, _var_WasteDispenseHeight_96Core);
          _var_WasteDispenseHeight_96Core = _var_WasteDispenseHeight_96Core + _var_WasteDispenseHeightIncrement_96Core;
          Sample_Dispense(ML_STAR, _Seq_BufferTrough, _Seq_IMCSTips2, _var_EquilibrationVolume, _var_EquilibrationDispenseHeight, var_EquilTipEject, 0, Tips_Seq);
          SE_Dispense(ML_STAR, _Seq_IMCSRack2, _Seq_WasteTrough, 30, _var_FullDispense, 0, _var_WasteDispenseHeight_96Core);
          _var_WasteDispenseHeight_96Core = _var_WasteDispenseHeight_96Core + _var_WasteDispenseHeightIncrement_96Core;
        }
        else
        {
          Sample_Dispense(ML_STAR, _Seq_BufferTrough, _Seq_IMCSTips1, _var_EquilibrationVolume, _var_EquilibrationDispenseHeight, var_EquilTipEject, var_EquilTipPickUp, Tips_Seq);
          SE_Dispense(ML_STAR, _Seq_IMCSRack1, _Seq_WasteTrough, 30, _var_FullDispense, 0, _var_WasteDispenseHeight_96Core);
          _var_WasteDispenseHeight_96Core = _var_WasteDispenseHeight_96Core + _var_WasteDispenseHeightIncrement_96Core;
        }
        EquilibrationDispenseHeight = EquilibrationDispenseHeight + 1;
      }
    }
    SampleWasteHeightDiff = _var_WasteDispenseHeightIncrement_96Core - _var_SampleDispenseHeightIncrement_96Core;
    _var_WasteDispenseHeight_96Core = _var_WasteDispenseHeight_96Core - SampleWasteHeightDiff;
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
    TipCount::Write2(_Seq_Slim300, Translate("Tip300SlimCounter"), ML_STAR);
  }

  private function SE_Dispense( device & ML_STAR, sequence & seq_tips, sequence & seq_aspdisp, variable iTime, variable Plunger_Dispense, variable EluteFlag, variable DispenseHeight ) void {
    private variable bin_SimulationMode;
    private variable RetractHeight;
    private variable bin_StoppableTimer;
    TrcTrace(Translate("Sample Dispense:"), Plunger_Dispense);
    MECC::TraceComment(Translate("+++++++++++++++  IMCStip Dispense  +++++++++++++++++++++++++"));
    bin_SimulationMode = HSLExtensions::Venus::IsStarSimulated(ML_STAR);
    if (bin_SimulationMode == 1)
    {
      bin_StoppableTimer = 1;
    }
    else
    {
      bin_StoppableTimer = 0;
    }
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::SetCuttedTipTypeByLength(ML_STAR, 4, 14.3);
    seq_aspdisp.SetCurrentPosition(1);
    seq_tips.SetCurrentPosition(1);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    if (EluteFlag == 0)
    {
      STAR_CHANNEL_MPH_FWCMD::_96HeadAsp_Disp(Translate(""), 0, 1, 0, 0, 0, 0.1, 0, 0, _var_SEC_Dispense_FAST, 0, 0, 0, Plunger_Dispense, DispenseHeight, ML_STAR, seq_aspdisp, 0, 0, 1, iTime, bin_StoppableTimer, 0);
    }
    else
    {
      STAR_CHANNEL_MPH_FWCMD::_96HeadAsp_Disp(Translate(""), 0, 1, 0, 0, 0, 0.1, 0, 0, _var_SEC_Dispense_FAST, 0, 0, 0, Plunger_Dispense, DispenseHeight, ML_STAR, seq_aspdisp, 0, 0, 1, iTime, bin_StoppableTimer, 0);
    }
    RetractHeight = DispenseHeight + 3;
    DispenseHeight = DispenseHeight - 2;
    STAR_CHANNEL_MPH_FWCMD::_96HeadAsp_Disp(Translate(""), 1, 0, 0, 1, 0, DispenseHeight, RetractHeight, 1, _var_SEC_Dispense_FAST, 0, 0, 1, 0, DispenseHeight, ML_STAR, seq_aspdisp, 0, 0, 1, 0, bin_StoppableTimer, 0);
    if (EluteFlag == 0)
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    else
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
    _ChangeSpecialPickUp(ML_STAR, _Seq_TipSupportReset_96Head, 1, Translate("1"));
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    _ChangeSpecialPickUp(ML_STAR, _Seq_TipSupportReset_96Head, 0, 1);
  }

  private function Init( device & ML_STAR, variable CommandString ) variable {
    private variable MethodsString;
    private variable VolumesString;
    private variable SourceString;
    private variable PositionsString;
    private variable SourcesString;
    private variable BufferPlatesString;
    private variable DestinationsString;
    private variable DestinationString;
    private variable ParentsString;
    private variable i_CommandParameterStrings;
    private variable WastePlatesString;
    private variable Dict[];
    private variable Delimiter;
    private variable SourceStringsArray[];
    private variable ParentsStringsArray[];
    private variable WastePlateStringsArray[];
    private variable BufferPlatesStringsArray[];
    private variable PositionsStringsArray[];
    private variable ParentStringsArray[];
    private variable MethodsStringsArray[];
    private variable VolumesStringsArray[];
    private variable DestinationStringsArray[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_ReservationsBuffer[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_Reservations[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_ReservationsMethods[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_ReservationsDestinations[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_ReservationsVolumes[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_ReservationsSources[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_ReservationsPositions[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_ReservationsWaste[];
    private variable NumReservations;
    private variable Counter;
    private variable _MODULE_IMCS_SIZEX_DESALTING_PositionsStringsArray[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_ParentStringsArray[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_MethodsStringsArray[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_DestinationStringsArray[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_WastePlateStringsArray[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_SourceStringsArray[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_BufferPlatesStringsArray[];
    private variable NumIMCSRacks[];
    private variable _MODULE_IMCS_SIZEX_DESALTING_VolumesStringsArray[];
    private variable _MODULE_HEATER_IsInit;
    private variable ID;
    private variable ReturnString;
    private variable Size;
    private variable NumRacksRequired;
    private variable NumRacks;
    private variable NumParents;
    private variable Temp[];
    private variable Racks[];
    COMMANDS::ParseCommandParametersString(CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("Parents"), ParentsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Destination"), DestinationsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Source"), SourcesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Waste"), WastePlatesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Buffer"), BufferPlatesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Volume"), VolumesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Method"), MethodsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Positions"), PositionsString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, ParentsString, _MODULE_IMCS_SIZEX_DESALTING_ParentStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, DestinationsString, _MODULE_IMCS_SIZEX_DESALTING_DestinationStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, SourcesString, _MODULE_IMCS_SIZEX_DESALTING_SourceStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, WastePlatesString, _MODULE_IMCS_SIZEX_DESALTING_WastePlateStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, BufferPlatesString, _MODULE_IMCS_SIZEX_DESALTING_BufferPlatesStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, VolumesString, _MODULE_IMCS_SIZEX_DESALTING_VolumesStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, MethodsString, _MODULE_IMCS_SIZEX_DESALTING_MethodsStringsArray);
    TOOLS::ParseDelimitedList(Delimiter, PositionsString, _MODULE_IMCS_SIZEX_DESALTING_PositionsStringsArray);
    NumRacksRequired = 0;
    NumParents=_MODULE_IMCS_SIZEX_DESALTING_ParentStringsArray.GetSize();
    {
      for(Counter = 0; Counter < NumParents;)
      {
        Counter = Counter + 1;
        TOOLS::StringArrayToIntArray(_MODULE_IMCS_SIZEX_DESALTING_VolumesStringsArray, Temp);
        Size=Temp.GetSize();
        NumRacksRequired = NumRacksRequired + Size;
      }
    }
    IMCS_SIZEX_DESALTING_CONFIG::GetIMCSRackSequences(Racks);
    NumRacks=Racks.GetSize();
    if (NumRacksRequired > NumRacks)
    {
      MECC::TraceComment(Translate("###############################\n###############################\n\nThere are not enough IMCS racks to perform this method\n\n###############################\n###############################"));
      abort;
    }
    MECC::TraceComment(Translate("Desalt module initialization succeeded"));
    _MODULE_IMCS_SIZEX_DESALTING_IsInit = Translate("True");
    ID = RETURNIDS::SuccessNoErrors();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Enough Desalting space is available"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function Equilibrate( device & ML_STAR, variable CommandString ) variable {
    private variable ID;
    private variable ReturnString;
    MECC::TraceComment(Translate("Desalt module initialization succeeded"));
    ID = RETURNIDS::SuccessNoErrors();
    ReturnString = RETURN::CreateReturnString(ID, Translate("Enough Desalting space is available"), Translate(""), Translate(""));
    return (ReturnString);
  }
} // library namespace
