#pragma once
#include "HSLTrcLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Lid\\Configuration\\Lid Config.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace LID {
  variable ReservedLids[];
  variable IsInit("False");
  private function AcquireReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function DeInit( device & ML_STAR, variable i_CommandString ) variable ;
  function DoCommand( device & ML_STAR, variable CommandString, variable i_CommandParameterStrings ) variable ;
  private function GetReservationLidSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function Init( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  private function ReleaseReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LID_CONFIG::_InitLibrary();
    RETURN::_InitLibrary();
    COMMANDS::_InitLibrary();
    SEQUENCES::_InitLibrary();
  }
  function _ExitLibrary() {
    LID_CONFIG::_ExitLibrary();
    RETURN::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    SEQUENCES::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumLids;
    private variable LidIDs[];
    private variable ReturnString;
    private variable SSA[];
    MECC::TraceComment(Translate("Lid module initialization beginning"));
    LID_CONFIG::Init();
    NumLids = LID_CONFIG::GetNumLids();
    MECC::TraceComment(Translate("***** Checking Lid module sequences for validity *****"));
    MECC::TraceComment(Translate("***** Checking Pipette module sequences for validity ***** Lids"));
    LID_CONFIG::GetLidSequenceStrings(SSA);
    SEQUENCES::CheckSequences(ML_STAR, SSA);
    MECC::TraceComment(Translate("***** Checking Lid module sequences for validity ***** SUCCESS"));
    LID_CONFIG::GetLidIDs(LidIDs);
    ReservedLids.SetSize(0);
    {
      for(Counter = 0; Counter < NumLids;)
      {
        Counter = Counter + 1;
        ReservedLids.AddAsLast(Translate(""));
        TrcTrace8(Translate("Lid # "), Counter, Translate(" with ID "), LidIDs.ElementAt( Counter -1), Translate(" was successfully intialized"), Translate(""), Translate(""), Translate(""));
      }
    }
    MECC::TraceComment(Translate("Lid module initialization succeeded"));
    IsInit = Translate("True");
    ReturnString = RETURN::CreateReturnString(0, Translate("Init always succeeds"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function AcquireReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumLids;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    NumLids = LID_CONFIG::GetNumLids();
    {
      for(Counter = 0; Counter < NumLids;)
      {
        Counter = Counter + 1;
        if (ReservedLids.ElementAt( Counter -1) == "")
        {
          ReservedLids.SetAt(Counter-1, PlateName);
          ReturnString = RETURN::CreateReturnString(0, Translate("Reservation Successful"), Translate(""), Translate(""));
          return (ReturnString);
        }
      }
    }
    ReturnString = RETURN::CreateReturnString(-2, Translate("No lids available"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function ReleaseReservation( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumLids;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    NumLids = LID_CONFIG::GetNumLids();
    {
      for(Counter = 0; Counter < NumLids;)
      {
        Counter = Counter + 1;
        if (ReservedLids.ElementAt( Counter -1) == PlateName)
        {
          ReservedLids.SetAt(Counter-1, Translate(""));
          ReturnString = RETURN::CreateReturnString(0, Translate("Reservation released"), Translate(""), Translate(""));
          return (ReturnString);
        }
      }
    }
    ReturnString = RETURN::CreateReturnString(1, Translate("Reservation not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function GetReservationLidSequenceString( device & ML_STAR, variable i_CommandParameterStrings ) variable {
    private variable Counter;
    private variable NumLids;
    private variable LidSequenceStrings[];
    private variable LidString;
    private variable ReturnString;
    private variable Dict[];
    private variable PlateName;
    private variable ReturnVal;
    COMMANDS::ParseCommandParametersString(i_CommandParameterStrings, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateName"), PlateName);
    NumLids = LID_CONFIG::GetNumLids();
    LID_CONFIG::GetLidSequenceStrings(LidSequenceStrings);
    {
      for(Counter = 0; Counter < NumLids;)
      {
        Counter = Counter + 1;
        if (ReservedLids.ElementAt( Counter -1) == PlateName)
        {
          LidString = LidSequenceStrings.ElementAt( Counter -1);
          ReturnString = RETURN::CreateReturnString(0, Translate("LidSequenceString Returned"), Translate("LidSequenceString"), ReturnVal);
          return (ReturnString);
        }
      }
    }
    ReturnString = RETURN::CreateReturnString(-2, Translate("Reservation not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DoCommand( device & ML_STAR, variable CommandString, variable i_CommandParameterStrings ) variable {
    private variable ReturnString;
    if (IsInit != "True")
    {
      ReturnString = RETURN::CreateReturnString(-2, Translate("Module not initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    if (CommandString == "AcquireReservation")
    {
      ReturnString = AcquireReservation(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    if (CommandString == "ReleaseReservation")
    {
      ReturnString = ReleaseReservation(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    if (CommandString == "GetReservationLidSequenceString")
    {
      ReturnString = GetReservationLidSequenceString(ML_STAR, i_CommandParameterStrings);
      return (ReturnString);
    }
    ReturnString = RETURN::CreateReturnString(-1, Translate("Command not found"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function DeInit( device & ML_STAR, variable i_CommandString ) variable {
    if (IsInit == "True")
    {
    }
    return (Translate("True"));
  }
} // library namespace
