#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\MagneticBeads\\Configuration\\Magnetic Beads Config.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace MAGNETIC_BEADS {
  function Init( device & ML_STAR, variable i_CommandString ) variable ;
  function MixBeadsOffRack( device & ML_STAR, variable i_CommandString ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    MAGNETIC_BEADS_CONFIG::_InitLibrary();
    COMMANDS::_InitLibrary();
    TOOLS::_InitLibrary();
    RETURN::_InitLibrary();
  }
  function _ExitLibrary() {
    MAGNETIC_BEADS_CONFIG::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    TOOLS::_ExitLibrary();
    RETURN::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable i_CommandString ) variable {
    private variable PlateType;
    private variable Dict[];
    private variable NumPlateTypes;
    private variable Counter;
    private variable Delimiter;
    private variable PlateTypeArray[];
    private variable SupportedPlateTypesArray[];
    private variable ReturnValue;
    private variable Counter2;
    private variable NumSupportedPlateTypes;
    private variable NumNotSupported;
    private variable UnsupportedTypesString;
    private variable NotSupportedTypes[];
    MAGNETIC_BEADS_CONFIG::Init();
    COMMANDS::ParseCommandParametersString(i_CommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("PlateType"), PlateType);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, PlateType, PlateTypeArray);
    NumPlateTypes=PlateTypeArray.GetSize();
    MAGNETIC_BEADS_CONFIG::GetSupportedPlateTypesArray(SupportedPlateTypesArray);
    NumSupportedPlateTypes=SupportedPlateTypesArray.GetSize();
    NotSupportedTypes.SetSize(0);
    {
      for(Counter = 0; Counter < NumPlateTypes;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumSupportedPlateTypes;)
          {
            Counter2 = Counter2 + 1;
            if (PlateTypeArray.ElementAt( Counter -1) == SupportedPlateTypesArray.ElementAt( Counter2 -1))
            {
              break;
            }
            if (Counter2 == NumSupportedPlateTypes)
            {
              NotSupportedTypes.AddAsLast(PlateTypeArray.ElementAt( Counter -1));
            }
          }
        }
      }
    }
    NumNotSupported=NotSupportedTypes.GetSize();
    if (NumNotSupported == 0)
    {
      ReturnValue = RETURN::CreateReturnString(0, Translate("All Plate types were supported"), Translate(""), Translate(""));
    }
    else
    {
      UnsupportedTypesString = TOOLS::ArrayToDelimitedList(Delimiter, NotSupportedTypes);
      ReturnValue = RETURN::CreateReturnString(-1, Translate("Found unsupported plate types AS UnsupportedPlateTypes."), Translate("UnsupportedPlateTypes"), UnsupportedTypesString);
    }
    return (ReturnValue);
  }

  function MixBeadsOffRack( device & ML_STAR, variable i_CommandString ) variable {
  }
} // library namespace
