#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace PIPETTE_CONFIG_LIQUID_CLASSES {
  variable LiquidClassVolumes[];
  variable LiquidClassClasses[];
  variable LiquidClassLiquidCategories[];
  function EDIT_ConfigurationLiquidClasses(  ) void ;
  function GetLiquidClassCategories( variable & o_LiquidClassCategories[] ) void ;
  function GetLiquidClassClasses( variable & o_LiquidClassClasses[] ) void ;
  function GetLiquidClassVolumes( variable & o_LiquidClassVolumes[] ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function EDIT_ConfigurationLiquidClasses(  ) void {
    LiquidClassVolumes.SetSize(0);
    LiquidClassVolumes.AddAsLast(5);
    LiquidClassVolumes.AddAsLast(50);
    LiquidClassVolumes.AddAsLast(300);
    LiquidClassVolumes.AddAsLast(1000);
    LiquidClassLiquidCategories.SetSize(0);
    LiquidClassLiquidCategories.AddAsLast(Translate("Water"));
    LiquidClassClasses = HSLExtensions::Array2D::Create(1, 4);
    HSLExtensions::Array2D::SetValue(LiquidClassClasses, 1, 1, Translate("Tip_50_TrisTweenBuffer_SurfaceEmpty_Normalization_WithFilter"));
    HSLExtensions::Array2D::SetValue(LiquidClassClasses, 1, 2, Translate("Tip_50ul_Water_DispenseSurface_Empty_WithFilter"));
    HSLExtensions::Array2D::SetValue(LiquidClassClasses, 1, 3, Translate("StandardVolume_Water_DispenseSurface_Empty_WithFilter"));
    HSLExtensions::Array2D::SetValue(LiquidClassClasses, 1, 4, Translate("HighVolume_Water_DispenseSurface_Empty_WithFilter"));
  }

  function GetLiquidClassVolumes( variable & o_LiquidClassVolumes[] ) void {
    o_LiquidClassVolumes.SetSize( 0);
    o_LiquidClassVolumes=LiquidClassVolumes;
  }

  function GetLiquidClassCategories( variable & o_LiquidClassCategories[] ) void {
    o_LiquidClassCategories.SetSize( 0);
    o_LiquidClassCategories=LiquidClassLiquidCategories;
  }

  function GetLiquidClassClasses( variable & o_LiquidClassClasses[] ) void {
    o_LiquidClassClasses.SetSize( 0);
    o_LiquidClassClasses=LiquidClassClasses;
  }
} // library namespace
