#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace PIPETTE_CONFIG_PLATE_EQUATIONS {
  global variable _MODULE_PIPETTE_CONFIG_SegmentEquations[];
  global variable _MODULE_PIPETTE_CONFIG_NumSegments[];
  global variable _MODULE_PIPETTE_CONFIG_SegmentHeights[];
  global variable _MODULE_PIPETTE_CONFIG_PlateTypes[];
  function EDIT_ConfigurationPlateEquations(  ) void ;
  function GetNumSegments( variable & o_NumSegments[] ) void ;
  function GetPlateTypes( variable & o_PlateTypes[] ) void ;
  function GetSegmentEquations( variable & o_SegmentEquations[] ) void ;
  function GetSegmentHeights( variable & o_SegmentHeights[] ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function EDIT_ConfigurationPlateEquations(  ) void {
    _MODULE_PIPETTE_CONFIG_PlateTypes.SetSize(0);
    _MODULE_PIPETTE_CONFIG_PlateTypes.AddAsLast(Translate("200uL Biorad 96 Well PCR Plate"));
    _MODULE_PIPETTE_CONFIG_PlateTypes.AddAsLast(Translate("2000uL Corning 96 Well PCR Plate"));
    _MODULE_PIPETTE_CONFIG_NumSegments.SetSize(0);
    _MODULE_PIPETTE_CONFIG_NumSegments.AddAsLast(Translate("2"));
    _MODULE_PIPETTE_CONFIG_NumSegments.AddAsLast(Translate("2"));
    _MODULE_PIPETTE_CONFIG_SegmentHeights = HSLExtensions::Array2D::Create(2, 2);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_PIPETTE_CONFIG_SegmentHeights, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 1, 1, Translate("0"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 1, 2, Translate("14.68"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 2, 1, Translate("4"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentHeights, 2, 2, Translate("38"));
    _MODULE_PIPETTE_CONFIG_SegmentEquations = HSLExtensions::Array2D::Create(2, 2);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_PIPETTE_CONFIG_SegmentEquations, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 1, 1, Translate("x * 2.3562"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 1, 2, Translate("x * 16.4934"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 2, 1, Translate("x * x * (12.5664 - (1.0472 * x))"));
    HSLExtensions::Array2D::SetValue(_MODULE_PIPETTE_CONFIG_SegmentEquations, 2, 2, Translate("x * 64.0000"));
  }

  function GetPlateTypes( variable & o_PlateTypes[] ) void {
    o_PlateTypes.SetSize( 0);
    o_PlateTypes=_MODULE_PIPETTE_CONFIG_PlateTypes;
  }

  function GetNumSegments( variable & o_NumSegments[] ) void {
    o_NumSegments.SetSize( 0);
    o_NumSegments=_MODULE_PIPETTE_CONFIG_NumSegments;
  }

  function GetSegmentHeights( variable & o_SegmentHeights[] ) void {
    o_SegmentHeights.SetSize( 0);
    o_SegmentHeights=_MODULE_PIPETTE_CONFIG_SegmentHeights;
  }

  function GetSegmentEquations( variable & o_SegmentEquations[] ) void {
    o_SegmentEquations.SetSize( 0);
    o_SegmentEquations=_MODULE_PIPETTE_CONFIG_SegmentEquations;
  }
} // library namespace
