#pragma once
#include "Hamilton FlipTubeTool\\Hamilton FlipTubeTool.hsl"
#include "VirtualLabware_V2.hsl"
#include "HSLTrcLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Configuration\\Pipette Config.hs_"
#include "HSLExtensions\\Array2D.hsl"
#include "HSLStrLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Script\\Module\\Script.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "HSLUtilLib.hsl"
#include "Visual_NTR_library\\Visual_NTR_library.hs_"
#include "HSLSeqLib.hsl"
#include "IMCS\\HSLTipCountingLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace PIPETTE {
  variable FTR1000Tips;
  variable NTR50Tips;
  variable NTR300Tips;
  variable FTR300SlimTips;
  sequence NTRWasteSequence;
  sequence Waste50NTR;
  variable Tip300Counter;
  variable Tip50Counter;
  variable Tip1000Counter;
  variable Tip300SlimCounter;
  sequence CoreGripToolSequence;
  function AddToUsedTips( variable TipType, variable & Volumes[] ) void ;
  private function CalculateUsedTips( variable & i_PipettingVolumes[] ) void ;
  private function CalculateVolumeHeights( variable & i_PlateTypes[], variable & i_Volumes[], variable & o_CalculatedHeights[] ) variable ;
  function DoTipLoading( device & ML_STAR, sequence & i_TipsSequences[] ) void ;
  private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool, device & ML_STAR ) void ;
  function Init( variable & i_PipettingVolumeCommandStrings[], sequence i_NTRWasteSequence, sequence i_CoreGripToolSequence ) void ;
  function MeasureWellVolume(  ) void ;
  function ShowTipsDialog(  ) void ;
  function TransferLiquid( device & ML_STAR, sequence & i_TipsSequences[], variable & DestinationSequenceStringsArray[], variable & DestinationSequencePositionsArray[], variable & SourceSequenceStringsArray[], variable & SourceSequencePositionsArray[], variable & TransferVolumesArray[], variable & CurrentVolumesArray[], variable & MixStringArray[] ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PIPETTE_CONFIG::_InitLibrary();
    SCRIPT::_InitLibrary();
    TOOLS::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
    COMMANDS::_InitLibrary();
  }
  function _ExitLibrary() {
    PIPETTE_CONFIG::_ExitLibrary();
    SCRIPT::_ExitLibrary();
    TOOLS::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    COMMANDS::_ExitLibrary();
  }

  function Init( variable & i_PipettingVolumeCommandStrings[], sequence i_NTRWasteSequence, sequence i_CoreGripToolSequence ) void {
    SCRIPT::Init();
    PIPETTE_CONFIG::Init();
    SeqCopySequence(i_NTRWasteSequence, NTRWasteSequence);
    SeqCopySequence(i_CoreGripToolSequence, CoreGripToolSequence);
    NTR50Tips = 0;
    NTR300Tips = 0;
    FTR1000Tips = 0;
    FTR300SlimTips = 0;
    Tip50Counter = Translate("Tip50Counter");
    Tip300Counter = Translate("Tip300Counter");
    Tip300SlimCounter = Translate("Tip300SlimCounter");
    Tip1000Counter = Translate("Tip1000Counter");
    CalculateUsedTips(i_PipettingVolumeCommandStrings);
  }

  function DoTipLoading( device & ML_STAR, sequence & i_TipsSequences[] ) void {
    private variable NumChannels;
    private variable NumTipsRequired;
    private variable Remainder;
    private variable NumSetsRequired;
    private variable loopCounter1;
    private variable NumTips;
    private variable TotalTips;
    private sequence TipSeq;
    private dialog customDialog_1;
    private variable Required;
    private variable Available;
    private variable FileCheckReturn;
    private sequence Waste300NTR;
    private dialog customDialog_2;
    private dialog customDialog_3;
    private dialog customDialog_4;
    NumChannels = PIPETTE_CONFIG::GetNumChannels();
    if (NTR50Tips > 0)
    {
      Remainder = NTR50Tips % NumChannels;
      NumSetsRequired = NTR50Tips / NumChannels;
      NumSetsRequired = StrFStr(NumSetsRequired);
      NumSetsRequired = StrIVal(NumSetsRequired);
      if (Remainder == 0)
      {
        NumSetsRequired = NumSetsRequired + 1;
      }
      else
      {
        NumSetsRequired = NumSetsRequired + 2;
      }
      NumTipsRequired = NumSetsRequired * NumChannels;
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, i_TipsSequences.ElementAt( 1 -1), Tip50Counter, Translate("Edit 50uL Tip Locations"), 1, 1000);
          SeqCopySequence(TipSeq, i_TipsSequences.ElementAt( 1 -1));
          NumTips = TipSeq.GetCurrentPosition();
          NumTips = NumTips - 1;
          TotalTips = SeqGetTotal(TipSeq);
          NumTips = TotalTips - NumTips;
          if (NumTipsRequired <= NumTips)
          {
            VISUAL_NTR_LIBRARY::SortSeqToDiscardEmptyNTROnDeck(NTRWasteSequence, 0, Waste50NTR, ML_STAR);
            break;
          }
          Required = NumTipsRequired;
          Available = NumTips;
          customDialog_2.InitCustomDialog("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");
          customDialog_2.SetCustomDialogProperty( "textBox1.Text", Required );
          customDialog_2.SetCustomDialogProperty( "textBox2.Text", Available );
          customDialog_2.ShowCustomDialog();
          FileCheckReturn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        }
      }
    }
    if (NTR300Tips > 0)
    {
      Remainder = NTR300Tips % NumChannels;
      NumSetsRequired = NTR300Tips / NumChannels;
      NumSetsRequired = StrFStr(NumSetsRequired);
      NumSetsRequired = StrIVal(NumSetsRequired);
      if (Remainder == 0)
      {
        NumSetsRequired = NumSetsRequired + 1;
      }
      else
      {
        NumSetsRequired = NumSetsRequired + 2;
      }
      NumTipsRequired = NumSetsRequired * NumChannels;
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, i_TipsSequences.ElementAt( 2 -1), Tip300Counter, Translate("Edit 300uL Tip Locations"), 1, 1000);
          SeqCopySequence(TipSeq, i_TipsSequences.ElementAt( 2 -1));
          NumTips = TipSeq.GetCurrentPosition();
          NumTips = NumTips - 1;
          TotalTips = SeqGetTotal(TipSeq);
          NumTips = TotalTips - NumTips;
          if (NumTipsRequired <= NumTips)
          {
            VISUAL_NTR_LIBRARY::SortSeqToDiscardEmptyNTROnDeck(NTRWasteSequence, 0, Waste300NTR, ML_STAR);
            break;
          }
          Required = NumTipsRequired;
          Available = NumTips;
          customDialog_3.InitCustomDialog("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");
          customDialog_3.SetCustomDialogProperty( "textBox1.Text", Required );
          customDialog_3.SetCustomDialogProperty( "textBox2.Text", Available );
          customDialog_3.ShowCustomDialog();
          FileCheckReturn = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
        }
      }
    }
    if (FTR300SlimTips > 0)
    {
      Remainder = FTR300SlimTips % NumChannels;
      NumSetsRequired = FTR300SlimTips / NumChannels;
      NumSetsRequired = StrFStr(NumSetsRequired);
      NumSetsRequired = StrIVal(NumSetsRequired);
      if (Remainder == 0)
      {
        NumSetsRequired = NumSetsRequired + 1;
      }
      else
      {
        NumSetsRequired = NumSetsRequired + 2;
      }
      NumTipsRequired = NumSetsRequired * NumChannels;
      TipCount::Read2(i_TipsSequences.ElementAt( 3 -1), Tip300SlimCounter, ML_STAR);
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          TipCount::Edit2(i_TipsSequences.ElementAt( 3 -1), Tip300SlimCounter, ML_STAR, 10000);
          NumTips = SeqGetTotal(i_TipsSequences.ElementAt( 3 -1));
          if (NumTipsRequired <= NumTips)
          {
            break;
          }
          Required = NumTipsRequired;
          Available = NumTips;
          customDialog_1.InitCustomDialog("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");
          customDialog_1.SetCustomDialogProperty( "textBox1.Text", Required );
          customDialog_1.SetCustomDialogProperty( "textBox2.Text", Available );
          customDialog_1.ShowCustomDialog();
          FileCheckReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        }
      }
      TipCount::Write2(i_TipsSequences.ElementAt( 3 -1), Tip300SlimCounter, ML_STAR);
    }
    if (FTR1000Tips > 0)
    {
      Remainder = FTR1000Tips % NumChannels;
      NumSetsRequired = FTR1000Tips / NumChannels;
      NumSetsRequired = StrFStr(NumSetsRequired);
      NumSetsRequired = StrIVal(NumSetsRequired);
      if (Remainder == 0)
      {
        NumSetsRequired = NumSetsRequired + 1;
      }
      else
      {
        NumSetsRequired = NumSetsRequired + 2;
      }
      NumTipsRequired = NumSetsRequired * NumChannels;
      TipCount::Read2(i_TipsSequences.ElementAt( 4 -1), Tip1000Counter, ML_STAR);
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          TipCount::Edit2(i_TipsSequences.ElementAt( 4 -1), Tip1000Counter, ML_STAR, 10000);
          NumTips = SeqGetTotal(i_TipsSequences.ElementAt( 4 -1));
          if (NumTipsRequired <= NumTips)
          {
            break;
          }
          Required = NumTipsRequired;
          Available = NumTips;
          customDialog_4.InitCustomDialog("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");
          customDialog_4.SetCustomDialogProperty( "textBox1.Text", Required );
          customDialog_4.SetCustomDialogProperty( "textBox2.Text", Available );
          customDialog_4.ShowCustomDialog();
          FileCheckReturn = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
        }
      }
      TipCount::Write2(i_TipsSequences.ElementAt( 4 -1), Tip1000Counter, ML_STAR);
    }
  }

  function MeasureWellVolume(  ) void {
  }

  function TransferLiquid( device & ML_STAR, sequence & i_TipsSequences[], variable & DestinationSequenceStringsArray[], variable & DestinationSequencePositionsArray[], variable & SourceSequenceStringsArray[], variable & SourceSequencePositionsArray[], variable & TransferVolumesArray[], variable & CurrentVolumesArray[], variable & MixStringArray[] ) void {
    private variable NumTransfers;
    NumTransfers=DestinationSequenceStringsArray.GetSize();
  }

  private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool, device & ML_STAR ) void {
    private variable ret_TipToolError;
    if (int_FlipTubeFunction == 1)
    {
      MECC::TraceComment(Translate("=====================\nInitialize Fliptool\n====================="));
      FLIPTUBETOOL::Initialize(0);
    }
    if (int_FlipTubeFunction == 2)
    {
      MECC::TraceComment(Translate("=====================\nOpen Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      ret_TipToolError = FLIPTUBETOOL::FlipTubeOpen(seq_TubeSequence, 0, str_ChannelPattern);
      if (ret_TipToolError == 0)
      {
        TrcTrace(Translate("***Error*** Flip Tube Open Error, Will Not Abort"), Translate("Extra Step to aid in open will commence"));
      }
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 12, 0, 0);
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -12, 0, 0);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
    if (int_FlipTubeFunction == 3)
    {
      MECC::TraceComment(Translate("=====================\nClose Fliptubes Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
    if (int_FlipTubeFunction == 4)
    {
      MECC::TraceComment(Translate("=====================\nSpecial Close Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -10, -15, 0);
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 10, 15, 0);
      FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
  }

  private function CalculateVolumeHeights( variable & i_PlateTypes[], variable & i_Volumes[], variable & o_CalculatedHeights[] ) variable {
    private variable NumPlateTypes;
    private variable Counter;
    private variable Counter2;
    private variable Segments;
    private variable SegmentHeights[];
    private variable PlateTypes[];
    private variable NumSegments[];
    private variable SegmentEquations[];
    private variable OutputFile;
    private variable Height;
    private variable InputFile;
    private file File;
    private variable NumInputPlateTypes;
    private variable MatchedTypeIndexes[];
    private variable NumMatched;
    private variable MaxSegments;
    private variable Index;
    private variable PlateTypeSegments[];
    private variable Equation;
    private variable ParamsString;
    private variable CalculatedHeightsString;
    private variable RootPath;
    private variable PythonScript;
    private variable RunnableCommand;
    private variable _Temp;
    PIPETTE_CONFIG::GetPlateTypes(PlateTypes);
    PIPETTE_CONFIG::GetNumSegments(NumSegments);
    PIPETTE_CONFIG::GetSegmentHeights(SegmentHeights);
    PIPETTE_CONFIG::GetSegmentEquations(SegmentEquations);
    NumInputPlateTypes=i_PlateTypes.GetSize();
    NumPlateTypes=PlateTypes.GetSize();
    MatchedTypeIndexes.SetSize(0);
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumPlateTypes;)
          {
            Counter2 = Counter2 + 1;
            if (i_PlateTypes.ElementAt( Counter -1) == PlateTypes.ElementAt( Counter2 -1))
            {
              MatchedTypeIndexes.AddAsLast(Counter2);
            }
          }
        }
      }
    }
    NumMatched=MatchedTypeIndexes.GetSize();
    if (NumMatched != NumInputPlateTypes)
    {
      return (Translate("False"));
    }
    PlateTypeSegments.SetSize(0);
    MaxSegments = 0;
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        Index = MatchedTypeIndexes.ElementAt( Counter -1);
        Segments = NumSegments.ElementAt( Index -1);
        Segments = StrIVal(Segments);
        if (Segments > MaxSegments)
        {
          MaxSegments = Segments;
        }
        PlateTypeSegments.AddAsLast(Segments);
      }
    }
    ParamsString = Translate("");
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        Index = MatchedTypeIndexes.ElementAt( Counter -1);
        Segments = NumSegments.ElementAt( Index -1);
        ParamsString = StrConcat12(ParamsString, Translate(""), i_Volumes.ElementAt( Counter -1), Translate(","), Segments, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Segments = StrIVal(Segments);
        {
          for(Counter2 = 0; Counter2 < Segments;)
          {
            Counter2 = Counter2 + 1;
            Equation = HSLExtensions::Array2D::GetValue(SegmentEquations, Index, Counter2);
            Height = HSLExtensions::Array2D::GetValue(SegmentHeights, Index, Counter2);
            ParamsString = StrConcat12(ParamsString, Translate(","), Equation, Translate(","), Height, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
        }
        if (Counter != NumInputPlateTypes)
        {
          ParamsString = StrConcat2(ParamsString, Translate(","));
        }
      }
    }
    RootPath = SCRIPT::GetConfigurationRootPath();
    InputFile = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\Input.txt"));
    File.AddField(1, ParamsString, hslString);
    File.SetDelimiter(hslAsciiText);
    if( 0 == File.Open(InputFile, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, InputFile, "HxMetEdCompCmd");
    }
    if( 0 == File.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    File.RemoveFields();
    PythonScript = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\CalculateVolumeHeight.py"));
    RunnableCommand = COMMANDS::GeneratePythonScriptCommand(PythonScript, Translate(""), Translate("True"));
    Util::SyncShell(RunnableCommand, 2, _Temp);
    OutputFile = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\Output.txt"));
    File.AddField(1, CalculatedHeightsString, hslString);
    File.SetDelimiter(hslAsciiText);
    if( 0 == File.Open(OutputFile, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, OutputFile, "HxMetEdCompCmd");
    }
    if( 0 == File.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    File.RemoveFields();
    TOOLS::ParseDelimitedList(Translate(","), CalculatedHeightsString, o_CalculatedHeights);
    return (Translate("True"));
  }

  function ShowTipsDialog(  ) void {
    private dialog customDialog_5;
    customDialog_5.InitCustomDialog("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");
    customDialog_5.SetCustomDialogProperty( "Tip50.Text", NTR50Tips );
    customDialog_5.SetCustomDialogProperty( "Tip300.Text", NTR300Tips );
    customDialog_5.SetCustomDialogProperty( "Slim300.Text", FTR1000Tips );
    customDialog_5.SetCustomDialogProperty( "SizeX.Text", FTR300SlimTips );
    customDialog_5.ShowCustomDialog();
  }

  private function CalculateUsedTips( variable & i_PipettingVolumes[] ) void {
    private variable Temp;
    private variable Volume;
    private variable Counter;
    private variable NumVolumes;
    private variable Params[];
    private variable Titles[];
    private variable Dict[];
    NumVolumes=i_PipettingVolumes.GetSize();
    {
      for(Counter = 0; Counter < NumVolumes;)
      {
        Counter = Counter + 1;
        COMMANDS::ParseCommandParametersString(i_PipettingVolumes.ElementAt( Counter -1), Dict);
        COMMANDS::GetDictionaryItem(Dict, Translate("Volume"), Volume);
        Volume = StrFVal(Volume);
        if (Volume <= 50)
        {
          NTR50Tips = NTR50Tips + 1;
        }
        else
        {
          if (Volume <= 300)
          {
            NTR300Tips = NTR300Tips + 1;
          }
          else
          {
            if (Volume <= 1000)
            {
              FTR1000Tips = FTR1000Tips + 1;
            }
            else
            {
              Temp = Volume / (1000 * 1.0);
              Temp = StrFStr(Temp);
              Temp = StrIVal(Temp);
              Temp = Temp + 1;
              FTR1000Tips = FTR1000Tips + Temp;
            }
          }
        }
      }
    }
  }

  function AddToUsedTips( variable TipType, variable & Volumes[] ) void {
    private variable NumVolumes;
    NumVolumes=Volumes.GetSize();
    if (TipType == "Desalting")
    {
      FTR300SlimTips = FTR300SlimTips + NumVolumes;
    }
    if (TipType == "Magnetic Beads")
    {
    }
    if (TipType == "Normal")
    {
      CalculateUsedTips(Volumes);
    }
  }
} // library namespace
