#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLExtensions\\Array3D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace TRANSPORT_CONFIG {
  global variable _MODULE_TRANSPORT_CONFIG_CoreGripToolSequenceString;
  global variable _MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth[];
  global variable _MODULE_TRANSPORT_CONFIG_LabwareGripHeight[];
  global variable _MODULE_TRANSPORT_CONFIG_TransportTypes[];
  global variable _MODULE_TRANSPORT_CONFIG_TransportableLabware[];
  global variable _MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth[];
  private function EDIT_Configuration(  ) void ;
  function GetCoreGripToolSequenceString(  ) variable ;
  function GetISwapExists(  ) variable ;
  function GetLabwareGripCloseWidths( variable & o_LabwareGripCloseWidths[] ) void ;
  function GetLabwareGripHeights( variable & o_LabwareGripHeights[] ) void ;
  function GetLabwareGripOpenWidths( variable & o_LabwareGripOpenWidths[] ) void ;
  function GetNumTransportTypes(  ) variable ;
  function GetTransportTypes( variable & o_TransportTypes[] ) void ;
  function GetTransportableLabwares( variable & o_TransportableLabwares[] ) void ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  private function EDIT_Configuration(  ) void {
    _MODULE_TRANSPORT_CONFIG_CoreGripToolSequenceString = Translate("False");
    _MODULE_TRANSPORT_CONFIG_TransportTypes.SetSize(0);
    _MODULE_TRANSPORT_CONFIG_TransportTypes.AddAsLast(Translate("ISwap"));
    _MODULE_TRANSPORT_CONFIG_TransportableLabware = HSLExtensions::Array2D::Create(1, 2);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_TRANSPORT_CONFIG_TransportableLabware, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_TransportableLabware, 1, 1, Translate("Lid"));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_TransportableLabware, 1, 2, Translate("200uL Biorad 96 Well PCR Plate"));
    _MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth = HSLExtensions::Array3D::Create(1, 2, 2);
    HSLExtensions::Array3D::InitializeAllValues(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, Translate(""));
    HSLExtensions::Array3D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, 1, 1, 1, 88);
    HSLExtensions::Array3D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, 1, 1, 2, 129);
    HSLExtensions::Array3D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, 1, 2, 1, 85);
    HSLExtensions::Array3D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth, 1, 2, 2, 126);
    _MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth = HSLExtensions::Array3D::Create(1, 2, 2);
    HSLExtensions::Array3D::InitializeAllValues(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, Translate(""));
    HSLExtensions::Array3D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, 1, 1, 1, 81);
    HSLExtensions::Array3D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, 1, 1, 2, 127);
    HSLExtensions::Array3D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, 1, 2, 1, 75);
    HSLExtensions::Array3D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth, 1, 2, 2, 124);
    _MODULE_TRANSPORT_CONFIG_LabwareGripHeight = HSLExtensions::Array2D::Create(1, 2);
    HSLExtensions::Array2D::InitializeAllValues(_MODULE_TRANSPORT_CONFIG_LabwareGripHeight, Translate(""));
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripHeight, 1, 1, 4);
    HSLExtensions::Array2D::SetValue(_MODULE_TRANSPORT_CONFIG_LabwareGripHeight, 1, 2, 4);
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetNumTransportTypes(  ) variable {
    private variable NumTypes;
    NumTypes=_MODULE_TRANSPORT_CONFIG_TransportTypes.GetSize();
    return (NumTypes);
  }

  function GetTransportableLabwares( variable & o_TransportableLabwares[] ) void {
    o_TransportableLabwares.SetSize( 0);
    o_TransportableLabwares=_MODULE_TRANSPORT_CONFIG_TransportableLabware;
  }

  function GetLabwareGripOpenWidths( variable & o_LabwareGripOpenWidths[] ) void {
    o_LabwareGripOpenWidths.SetSize( 0);
    o_LabwareGripOpenWidths=_MODULE_TRANSPORT_CONFIG_LabwareGripOpenWidth;
  }

  function GetLabwareGripCloseWidths( variable & o_LabwareGripCloseWidths[] ) void {
    o_LabwareGripCloseWidths.SetSize( 0);
    o_LabwareGripCloseWidths=_MODULE_TRANSPORT_CONFIG_LabwareGripCloseWidth;
  }

  function GetLabwareGripHeights( variable & o_LabwareGripHeights[] ) void {
    o_LabwareGripHeights.SetSize( 0);
    o_LabwareGripHeights=_MODULE_TRANSPORT_CONFIG_LabwareGripHeight;
  }

  function GetISwapExists(  ) variable {
    private variable Counter;
    private variable NumTransportTypes;
    NumTransportTypes = GetNumTransportTypes();
    {
      for(Counter = 0; Counter < NumTransportTypes;)
      {
        Counter = Counter + 1;
        if (_MODULE_TRANSPORT_CONFIG_TransportTypes.ElementAt( Counter -1) == "ISwap")
        {
          return (Translate("True"));
        }
      }
    }
    return (Translate("False"));
  }

  function GetTransportTypes( variable & o_TransportTypes[] ) void {
    o_TransportTypes.SetSize( 0);
    o_TransportTypes=_MODULE_TRANSPORT_CONFIG_TransportTypes;
  }

  function GetCoreGripToolSequenceString(  ) variable {
    return (_MODULE_TRANSPORT_CONFIG_CoreGripToolSequenceString);
  }
} // library namespace
