#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Transport\\Configuration\\Transport Config.hs_"
#include "HSLExtensions\\Array2D.hsl"
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TRANSPORT {
  sequence GripperSequence;
  variable IsInit("False");
  private function CoreTransport( device & ML_Star, sequence SourceSequence, sequence DestinationSequence, variable TransportType, variable LabwareType, variable Park, variable CheckExists ) void ;
  function DoCommand( device & ML_STAR, variable CommandString, variable & i_CommandParameterStringsArray[] ) variable ;
  function Init( device & ML_STAR, variable & i_CommandParameterStringsArray[] ) variable ;
  function MoveLabware( device & ML_Star, variable & i_CommandParameterStringsArray[] ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TRANSPORT_CONFIG::_InitLibrary();
    RETURN::_InitLibrary();
    COMMANDS::_InitLibrary();
  }
  function _ExitLibrary() {
    TRANSPORT_CONFIG::_ExitLibrary();
    RETURN::_ExitLibrary();
    COMMANDS::_ExitLibrary();
  }

  function Init( device & ML_STAR, variable & i_CommandParameterStringsArray[] ) variable {
    private variable SeqString;
    private variable Dict[];
    private variable NumParameterLines;
    private variable ReturnString;
    NumParameterLines=i_CommandParameterStringsArray.GetSize();
    if (NumParameterLines != 1)
    {
      ReturnString = RETURN::CreateReturnString(-1, Translate("Command parameters lines are not equal to one"), Translate(""), Translate(""));
      return (ReturnString);
    }
    TRANSPORT_CONFIG::Init();
    COMMANDS::ParseCommandParametersString(i_CommandParameterStringsArray.ElementAt( 1 -1), Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("GripperToolSequenceString"), SeqString);
    DevGetSequenceRef(ML_STAR, SeqString, GripperSequence);
    IsInit = Translate("True");
    ReturnString = RETURN::CreateReturnString(0, Translate("Init always succeeds"), Translate(""), Translate(""));
    return (ReturnString);
  }

  function MoveLabware( device & ML_Star, variable & i_CommandParameterStringsArray[] ) variable {
    private variable TranportType;
    private variable NumTransportableLabware;
    private variable Counter;
    private variable Counter2;
    private variable NumTransportTypes;
    private variable TransportableLabwareArray[];
    private variable TransportTypes[];
    private variable TransportableLabwares[];
    private variable Counter3;
    private sequence SourceSequence;
    private sequence DestinationSequence;
    private variable NumParameterLines;
    private variable ReturnString;
    private variable Dict[];
    private variable LabwareSourceType;
    private variable CheckExists;
    private variable Park;
    private variable DestinationSequenceString;
    private variable LabwareDestinationType;
    private variable SourceSequenceString;
    NumParameterLines=i_CommandParameterStringsArray.GetSize();
    if (NumParameterLines != 1)
    {
      ReturnString = RETURN::CreateReturnString(-1, Translate("Command parameters lines are not equal to one"), Translate(""), Translate(""));
      return (ReturnString);
    }
    COMMANDS::ParseCommandParametersString(i_CommandParameterStringsArray.ElementAt( 1 -1), Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("SourceLabwareType"), LabwareSourceType);
    COMMANDS::GetDictionaryItem(Dict, Translate("SourceSequenceString"), SourceSequenceString);
    COMMANDS::GetDictionaryItem(Dict, Translate("DestinationLabwareType"), LabwareDestinationType);
    COMMANDS::GetDictionaryItem(Dict, Translate("DestinationSequenceString"), DestinationSequenceString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Park"), Park);
    COMMANDS::GetDictionaryItem(Dict, Translate("CheckExists"), CheckExists);
    DevGetSequenceRef(ML_Star, SourceSequenceString, SourceSequence);
    DevGetSequenceRef(ML_Star, DestinationSequenceString, DestinationSequence);
    NumTransportTypes = TRANSPORT_CONFIG::GetNumTransportTypes();
    TRANSPORT_CONFIG::GetTransportTypes(TransportTypes);
    TRANSPORT_CONFIG::GetTransportableLabwares(TransportableLabwares);
    TranportType = 0;
    {
      for(Counter = 0; Counter < NumTransportTypes;)
      {
        Counter = Counter + 1;
        TransportableLabwareArray = HSLExtensions::Array2D::GetColumn(TransportableLabwares, Counter);
        NumTransportableLabware=TransportableLabwareArray.GetSize();
        {
          for(Counter2 = 0; Counter2 < NumTransportableLabware;)
          {
            Counter2 = Counter2 + 1;
            if (TransportableLabwareArray.ElementAt( Counter2 -1) == LabwareSourceType)
            {
              {
                for(Counter3 = 0; Counter3 < NumTransportableLabware;)
                {
                  Counter3 = Counter3 + 1;
                  if (TransportableLabwareArray.ElementAt( Counter3 -1) == LabwareDestinationType)
                  {
                    if (TransportTypes.ElementAt( Counter -1) == "CORE")
                    {
                      CoreTransport(ML_Star, SourceSequence, DestinationSequence, Counter, Counter2, Park, CheckExists);
                    }
                    if (TransportTypes.ElementAt( Counter -1) == "ISwap")
                    {
                    }
                    ReturnString = RETURN::CreateReturnString(0, Translate("Labware movement succeeded"), Translate(""), Translate(""));
                    return (ReturnString);
                  }
                }
              }
            }
          }
        }
      }
    }
    ReturnString = RETURN::CreateReturnString(-2, Translate("Could not find a gripper that satisfies labware move criteria."), Translate(""), Translate(""));
    return (ReturnString);
  }

  private function CoreTransport( device & ML_Star, sequence SourceSequence, sequence DestinationSequence, variable TransportType, variable LabwareType, variable Park, variable CheckExists ) void {
    private variable ISwapExists;
    private variable LabwareGripCloseWidths[];
    private variable LabwareGripHeights[];
    private variable LabwareGripOpenWidths[];
    private variable GripHeight;
    private variable CloseWidth;
    private variable OpenWidth;
    private variable LabwareGripOpenWidthsArray[];
    private variable LabwareGripHeightsArray[];
    private variable LabwareGripCloseWidthsArray[];
    private variable CheckExistsBefore;
    private variable CheckExistsAfter;
    if (CheckExists == "False")
    {
      CheckExistsBefore = 0;
      CheckExistsAfter = 0;
    }
    else
    {
      if (CheckExists == "Before")
      {
        CheckExistsBefore = 1;
      }
      if (CheckExists == "After")
      {
        CheckExistsAfter = 1;
      }
      if (CheckExists == "Both")
      {
        CheckExistsAfter = 1;
        CheckExistsBefore = 1;
      }
    }
    if (Park == "True")
    {
      Park = 1;
    }
    else
    {
      Park = 0;
    }
    ISwapExists = TRANSPORT_CONFIG::GetISwapExists();
    TRANSPORT_CONFIG::GetLabwareGripCloseWidths(LabwareGripCloseWidths);
    TRANSPORT_CONFIG::GetLabwareGripOpenWidths(LabwareGripOpenWidths);
    TRANSPORT_CONFIG::GetLabwareGripHeights(LabwareGripHeights);
    LabwareGripCloseWidthsArray = HSLExtensions::Array2D::GetColumn(LabwareGripCloseWidths, TransportType);
    LabwareGripOpenWidthsArray = HSLExtensions::Array2D::GetColumn(LabwareGripOpenWidths, TransportType);
    LabwareGripHeightsArray = HSLExtensions::Array2D::GetColumn(LabwareGripHeights, TransportType);
    CloseWidth=LabwareGripCloseWidthsArray.GetAt(LabwareType-1);
    OpenWidth=LabwareGripCloseWidthsArray.GetAt(LabwareType-1);
    GripHeight=LabwareGripHeightsArray.GetAt(LabwareType-1);
    ML_Star._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_Star._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function DoCommand( device & ML_STAR, variable CommandString, variable & i_CommandParameterStringsArray[] ) variable {
    private variable ReturnString;
    if (CommandString == "Init")
    {
      ReturnString = Init(ML_STAR, i_CommandParameterStringsArray);
      return (ReturnString);
    }
    if (IsInit == "False")
    {
      ReturnString = RETURN::CreateReturnString(-2, Translate("Module not initialized"), Translate(""), Translate(""));
      return (ReturnString);
    }
    if (CommandString == "MoveLabware")
    {
      ReturnString = MoveLabware(ML_STAR, i_CommandParameterStringsArray);
      return (ReturnString);
    }
    ReturnString = RETURN::CreateReturnString(-1, Translate("Command not found"), Translate(""), Translate(""));
    return (ReturnString);
  }
} // library namespace
